OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.1.0)
0x790d75b8 = Jussi T. Lindgren
0x9f5c4075 = Tracker bidir example
0xf8034a49 = Inria
Comment
  This scenario illustrates receiving a signal
  from the Tracker, filtering and displaying it,
  and sending the filtered signal back
  to the Tracker.

  The filtered result should appear as a
  new track in the Tracker workspace.
Comment
  It is important that the Tracker workspace
  is configured to both send and receive when
  this scenario is used as its processor.

  Note that the number of output streams and their
  order in the 'From Tracker' box must  exactly
  match the selected streams in the Tracker.

From Tracker => #0
  Launch third party program = false
  Executable path =
  Arguments =
  Port = ${Tracker_Port_Send}
  Automatic connection identifier = true
  Custom connection identifier =
  Incoming connection timeout = 10
  Generator = true
#0.New output -> Temporal Filter => #1
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 1
  High Cut-off Frequency (Hz) = 2
Data=#1, Stimulations=#0.New output(1) -> Signal display "Filtered signal"
  Display Mode = Scan
  Auto vertical scale = Global
  Scale refresh interval (secs) = 5
  Vertical Scale = 2
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
New input=#1, New input(1)=#0.New output(1) -> To Tracker
  Launch third party program = false
  Executable path =
  Arguments =
  Port = ${Tracker_Port_Receive}
  Automatic connection identifier = true
  Custom connection identifier =
  Incoming connection timeout = 10
  Generator = false
#0.New output -> 0x341d3912 Debug: Signals
  EBML nodes description = ${Path_Data}/plugins/tools/config-ebml-stream-spy.txt
  Log level to use = Information
  Expand binary blocks = true
  Number of values in expanded blocks = 4
#0.New output(1) -> 0x341d3912 Stimulation listener "Debug: Stims"
  Log level to use = Information
#0.New output -> Timeout
  Timeout delay = 5
  Output Stimulation = OVTK_StimulationId_Label_00
-> Player Controller
  Stimulation name = OVTK_StimulationId_Label_00
  Action to perform = Stop
