OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.1.0)
0x790d75b8 = Jussi T. Lindgren
0x9f5c4075 = Tracker ERP example
0xf8034a49 = Inria
Comment
  Data is read from the Tracker. Here we assume
  that a specific file called 'simulated-2classes.ov'
  will be sent by the Tracker.
Comment
  Smooth the signal by downsampling
Comment
  Redirect chunks based on trial type
Comment
  Compute cumulative means
Comment
  On the average the signal that looked like noise
  should reveal the following characteristics:

  For 1s period following target,
  there is higher signal power at 8hz

  For 1s period following nontarget,
  a square wave is hidden.

  Normally the ERP plots are used to show for
  example the classic P300 shape for P300 data.
Comment
  After receiving end of file stimulation,
  the ERP Plot box will render its plot to a file.

  The file will be under a folder:
  Windows: AppData/Roaming/openvibe-x.y.z/
  Linux: ~/.config/openvibe-x.y.z/

External Processing => #0
  Launch third party program = false
  Executable path =
  Arguments =
  Port = ${Tracker_Port_Send}
  Automatic connection identifier = true
  Custom connection identifier =
  Incoming connection timeout = 10
  Generator = true
#0.New output -> Signal Resampling => #1
  New Sampling Frequency = 128
  Sample Count Per Buffer = 8
  Low Pass Filter Signal Before Downsampling = true
Input signal=#1, Input stimulations=#0.New output(1) -> Stimulation based epoching
  Epoch duration (in sec) = 1
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_Target
-> Epoch variance => #3
  Averaging type = Cumulative average
  Epoch count = 4
  Significance level = 0.01
Input signal=#1, Input stimulations=#0.New output(1) -> Stimulation based epoching
  Epoch duration (in sec) = 1
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_NonTarget
-> Epoch variance => #5
  Averaging type = Cumulative average
  Epoch count = 4
  Significance level = 0.01
Trigger=#0.New output(1), ERP1=#3.Averaged epochs, Variance1=#3.Variance of epochs, ERP2=#5.Averaged epochs, Variance2=#5.Variance of epochs -> ERP plot
  Filename final figure = ${Path_UserData}/tracker-erp-example-plot.png
  Trigger to save figure = OVTK_StimulationId_ExperimentStop
  X starts at 0 = true
  Line color 1 = 8,20,89
  Line label 1 = Target
  Line color 2 = 100,0,0
  Line label 2 = NonTarget
#0.New output(1) -> 0x341d3912 Stimulation listener "Debugger"
  Log level to use = Information
Data=#0.New output, Stimulations=#0.New output(1) -> Signal display "Raw signal"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#0.New output -> Timeout
  Timeout delay = 5
  Output Stimulation = OVTK_StimulationId_EndOfFile
-> Player Controller
  Stimulation name = OVTK_StimulationId_EndOfFile
  Action to perform = Stop
