OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.1.0)
0x790d75b8 = Jussi T. Lindgren
0x9f5c4075 = Tracker Sink example
0xf8034a49 = Inria
Comment
  Example of a processor that receives data from the Tracker,
  but does not send anything to it:
  the processor works as a Data Sink.

  In this case, the tracker Workspace must be
  configured to Send but not to Receive.

External Processing => #0
  Launch third party program = false
  Executable path =
  Arguments =
  Port = ${Tracker_Port_Send}
  Automatic connection identifier = true
  Custom connection identifier =
  Incoming connection timeout = 10
  Generator = true
#0.New output -> Temporal Filter => #1
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 1
  High Cut-off Frequency (Hz) = 40
Data=#1, Stimulations=#0.New output(1) -> Signal display
  Display Mode = Scan
  Auto vertical scale = Global
  Scale refresh interval (secs) = 5
  Vertical Scale = 2
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#0.New output -> Timeout
  Timeout delay = 3
  Output Stimulation = OVTK_StimulationId_Label_00
-> Player Controller
  Stimulation name = OVTK_StimulationId_Label_00
  Action to perform = Stop
#0.New output(1) -> 0x341d3912 Signals
  EBML nodes description = ${Path_Data}/plugins/tools/config-ebml-stream-spy.txt
  Log level to use = Information
  Expand binary blocks = true
  Number of values in expanded blocks = 4
#0.New output(1) -> 0x341d3912 Stimulation listener "Stims"
  Log level to use = Information
