OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.1.0)
0x790d75b8 = Jussi T. Lindgren
0x9f5c4075 = Tracker Source example
0xf8034a49 = Inria
Comment
  Example of a processor that sends data to the Tracker,
  but does not receive anything from it: the processor
  works as a Data Source.

  The generated data should appear in the Tracker
  as a new track.

  In this case, the tracker Workspace must be
  configured to Receive but not to Send.

Noise generator => #0
  Channel count = 5
  Sampling frequency = 256
  Generated epoch sample count = 32
  Noise type = Gaussian
-> 0x341d3912 Signals
  EBML nodes description = ${Path_Data}/plugins/tools/config-ebml-stream-spy.txt
  Log level to use = Information
  Expand binary blocks = true
  Number of values in expanded blocks = 4
Clock stimulator => #2
  Interstimulation interval (in sec) = 0.5
  Stimulation = OVTK_StimulationId_Label_00
New input=#0, New input(1)=#2 -> External Processing
  Launch third party program = false
  Executable path =
  Arguments =
  Port = ${Tracker_Port_Receive}
  Automatic connection identifier = true
  Custom connection identifier =
  Incoming connection timeout = 10
  Generator = false
Data=#0, Stimulations=#2 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Global
  Scale refresh interval (secs) = 5
  Vertical Scale = 2
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#2 -> 0x341d3912 Stimulation listener "Stims"
  Log level to use = Information

Timeout
  Timeout delay = 5
  Output Stimulation = OVTK_StimulationId_Label_00
-> Player Controller
  Stimulation name = OVTK_StimulationId_Label_00
  Action to perform = Stop
