OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.5.0)
0x790d75b8 = Tiaan Boshoff
0x8c1fc55b = 1.0
0x9f5c4075 = Switching Sound Player
0xf6b2e3fa = Stimulation
0xf8034a49 = Okanagan Visualization and Interaction Lab
Settings
  STOP trigger = OVTK_StimulationId_Label_00
  Loop = false
  1 - PLAY trigger = OVTK_StimulationId_Label_01
  1 - File to play = ${Path_Data}/plugins/stimulation/ov_beep.wav
  2 - PLAY trigger = OVTK_StimulationId_Label_06
  2 - File to play = ${Path_Data}/plugins/stimulation/ov_beep.wav
  3 - PLAY trigger = OVTK_StimulationId_Label_03
  3 - File to play = ${Path_Data}/plugins/stimulation/ov_beep.wav
  4 - PLAY trigger = OVTK_StimulationId_Label_04
  4 - File to play = ${Path_Data}/plugins/stimulation/ov_beep.wav
Input Input triggers -> #0
Output 1 - Resync triggers (deprecated) <- #1
Output 2 - Resync triggers (deprecated) <- #2
Output 3 - Resync triggers (deprecated) <- #3
Output 4 - Resync triggers (deprecated) <- #4

Identity => #0
-> Sound Player 1 => #1
  PLAY trigger = $var{1 - PLAY trigger}
  STOP trigger = $var{STOP trigger}
  File to play = $var{1 - File to play}
  Loop = $var{Loop}
#0 -> Sound Player 2 => #2
  PLAY trigger = $var{2 - PLAY trigger}
  STOP trigger = $var{STOP trigger}
  File to play = $var{2 - File to play}
  Loop = $var{Loop}
#0 -> Sound Player 3 => #3
  PLAY trigger = $var{3 - PLAY trigger}
  STOP trigger = $var{STOP trigger}
  File to play = $var{3 - File to play}
  Loop = $var{Loop}
#0 -> Sound Player 4 => #4
  PLAY trigger = $var{4 - PLAY trigger}
  STOP trigger = $var{STOP trigger}
  File to play = $var{4 - File to play}
  Loop = $var{Loop}
