OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.2.0)
Comment
  This Scenario is set for a g.tec cap with 2 amplifier g.USBamp
Comment
  Channel Selection
Comment
  OVERVIEW
  Change Settings on Scenario Configuration tab :
  Scripts path = folder to the scripts and config files (normally don't need to change that if you keep the hierarchy)
  EMG Low/High Cut Frequency = Frequency for the temporal filter on EMG Monitoring
  Alpha Low/High Cut Frequency = Frequency for the temporal filter on Alpha Monitoring
  Low/High Cut Frequency = Frequency for the temporal filter on classical Monitoring

  You can enable/disable displays (last line) with right click on it and select enable/disable option.
Comment
  Filters
Comment
  PRESENTATION
  Les options sont modifiables dans l'onglet Scenario Configuration :
  Scripts path = dossier des scripts et des fichiers de configuration (normalement, il n'est pas nécessaire de changer cela si vous conservez la hiérarchie)
  EMG Low/High Cut Frequency =Fréquence du filtre temporel pour le monitoring EMG
  Alpha Low/High Cut Frequency = Fréquence du filtre temporel pour le monitoring Alpha
  Low/High Cut Frequency = Fréquence du filtre temporel pour le monitoring classique

  Vous pouvez activer/désactiver les displays (dernière ligne) en faisant un clic droit dessus et en sélectionnant l'option enable/disable.
Comment
  Displays
Settings
  Scripts Path = ${Player_ScenarioDirectory}/scripts
  EMG Low Cut Frequency = 50
  EMG High Cut Frequency = 150
  Alpha Low Cut Frequency = 8
  Alpha High Cut Frequency = 12
  Low Cut Frequency = 1
  High Cut Frequency = 40

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Channel Rename => #1
  New channel names = Channel 1;Channel 2
  0x8d21ff41 = $var{Scripts Path}/channel-list.xml
-> Channel Selector "EMGg;EMGd"
  Channel List = EMGg;EMGd
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter "EMG Filter" => #3
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = $var{EMG Low Cut Frequency}
  High Cut-off Frequency (Hz) = $var{EMG High Cut Frequency}
Data=#3 -> Signal display "EMG signal"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#1 -> Channel Selector "P3;Pz;P4"
  Channel List = P3;Pz;P4
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter "Alpha Filter" => #6
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = $var{Alpha Low Cut Frequency}
  High Cut-off Frequency (Hz) = $var{Alpha High Cut Frequency}
Data=#6 -> Signal display "Alpha signal"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#1 -> Channel Selector "!EventChannel1;EventChannel2"
  Channel List = EventChannel1;EventChannel2
  Action = Reject
  Channel Matching Method = Smart
-> Temporal filter "General Filter"
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = $var{Low Cut Frequency}
  High Cut-off Frequency (Hz) = $var{High Cut Frequency}
-> Identity => #10
-> Channel Selector "1:16" => #11
  Channel List = 1:16
  Action = Select
  Channel Matching Method = Smart
Data=#11 -> Signal display "1:16"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#10 -> Channel Selector "17:32" => #13
  Channel List = 17:32
  Action = Select
  Channel Matching Method = Smart
Data=#13 -> Signal display "17:30"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Input stream 1=#0.Signal stream, Input stream 2=#0.Stimulations -> Identity => #15
Data=#15.Output stream 1, Stimulations=#15.Output stream 2 -> 0x341d3912 0xc73e83ec Signal display "Raw signals"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
