OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.2.0)
Comment
  This Scenario is set for a g.tec cap with 2 amplifier g.USBamp
Comment
  OVERVIEW
  Change Settings on Scenario Configuration tab :
  Scripts/Images/Signals path = folder to the different files (normally don't need to change that if you keep the hierarchy)
  Obvious settings = obvious....
  Eyes (OE, CE) = indicate if the baseline is Opened Eyes (OE) or Closed Eyes (CE)

  File Format for saved signals : {XP Name}_{Subject ID}_S{Session}_{OE/CE}_baseline-[{date}-{time}]
Comment
  PRESENTATION
  Les options sont modifiables dnas l'onglet Scenario Configuration :
  Scripts/Images/Signals path = dossier des différents fichiers (normalement, il n'est pas nécessaire de changer cela si vous conservez la hiérarchie)
  Paramètres évidents = évidents.....
  Eyes(OE,CE) = Indique si la baseline s'effectue yeux ouvert (OE) ou yeux fermés (CE)

  Format de fichier pour les signaux enregistrés : {XP Name}_{Subject ID}_S{Session}_{OE/CE}_baseline-[{date}-{time}]
Settings
  Scripts Path = ${Player_ScenarioDirectory}/scripts
  Images Path = ${Player_ScenarioDirectory}/img
  Signals Path = ${Player_ScenarioDirectory}/signals
  Baseline Duration (s) = 180
  XP Name = XP
  Subject ID = C1
  Session = 1
  Eyes (OE, CE) = OE
  File Prefix = $var{XP Name}_$var{Subject ID}_S$var{Session}__$var{Eyes (OE, CE)}

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Channel Rename
  New channel names = Channel 1;Channel 2
  0x8d21ff41 = $var{Scripts Path}/channel-list.xml
-> Channel Selector "!EventChannel1;EventChannel2" => #2
  Channel List = EventChannel1;EventChannel2
  Action = Reject
  Channel Matching Method = Smart
#0.Experiment information -> Identity => #3
Lua Stimulator => #4
  Lua Script = $var{Scripts Path}/scenario-baseline.lua
  baseline duration = $var{Baseline Duration (s)}
-> Identity => #5
Input stream 1=#3, Input stream 2=#2, Input stream 3=#5 -> Generic stream writer
  Filename = $var{Signals Path}/$var{File Prefix}_baseline-[$core{date}-$core{time}].ov
  Use compression = false
Experiment information=#3, Signal=#2, Stimulation=#5 -> GDF file writer
  Filename = $var{Signals Path}/$var{File Prefix}_baseline-[$core{date}-$core{time}].gdf
#4 -> Sound Player
  PLAY trigger = OVTK_StimulationId_Beep
  STOP trigger = OVTK_StimulationId_BaselineStop
  File to play = ${Path_Data}/plugins/stimulation/ov_beep.wav
  Loop = False
#4 -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
#4 -> Display cue image
  Display images in full screen = false
  Scale images to fit = false
  Clear screen Stimulation = OVTK_StimulationId_BaselineStop
  Cue Image 1 = $var{Images Path}/Cross.png
  Stimulation 1 = OVTK_StimulationId_BaselineStart
