OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.2.0)
Comment
  This Scenario is set for a g.tec cap with 2 amplifier g.USBamp
Comment
  OVERVIEW
  Change Settings on Scenario Configuration tab :
  Scripts/Images/Signals path = folder to the different files (normally don't need to change that if you keep the hierarchy)
  Sham File = link to the file for the sham feedback
  Obvious settings = obvious....

  File Format for saved signals : {XP Name}_{Subject ID}_S{Session}_R{Run}_acquisition-[{date}-{time}]
Comment
  PRESENTATION
  Les options sont modifiables dnas l'onglet Scenario Configuration :
  Scripts/Images/Signals path = dossier des différents fichiers (normalement, il n'est pas nécessaire de changer cela si vous conservez la hiérarchie)
  Sham File = Lien vers le fichier pour le faux feedback
  Paramètres évidents = évidents.....

  Format de fichier pour les signaux enregistrés : {XP Name}_{Subject ID}_S{Session}_R{Run}_acquisition-[{date}-{time}]
Settings
  Scripts Path = ${Player_ScenarioDirectory}/scripts
  Signals Path = ${Player_ScenarioDirectory}/signals
  Sham File = ${Player_ScenarioDirectory}/sham.ov
  XP Name = XP
  Subject ID = C1
  Session = 1
  Run = 1
  File Prefix = $var{XP Name}_$var{Subject ID}_S$var{Session}_R$var{Run}

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Channel Rename
  New channel names = Channel 1;Channel 2
  0x8d21ff41 = $var{Scripts Path}/channel-list.xml
-> Channel Selector "!EventChannel1;EventChannel2" => #2
  Channel List = EventChannel1;EventChannel2
  Action = Reject
  Channel Matching Method = Smart
Graz Motor Imagery BCI Stimulator => #3
  Lua Script = $var{Scripts Path}/mi-bci-graz-stimulator.lua
  Number of Trials for Each Class = 20
  First Class = OVTK_GDF_Left
  Second Class = OVTK_GDF_Right
  Baseline Duration (in sec) = 1
  Wait For Beep Duration (in sec) = 2
  Wait For Cue Duration (in sec) = 1
  Display Cue Duration (in sec) = 1.25
  Feedback Duration (in sec) = 3.75
  End of Trial Minimum Duration (in sec) = 1.5
  End of Trial Maximum Duration (in sec) = 3.5
-> Identity => #4
Input stream 2=#2, Input stream 3=#4 -> Generic stream writer
  Filename = $var{Signals Path}/$var{File Prefix}_acquisition-[$core{date}-$core{time}].ov
  Use compression = false
Signal=#2, Stimulation=#4 -> GDF file writer
  Filename = $var{Signals Path}/$var{File Prefix}_acquisition-[$core{date}-$core{time}].gdf
#3 -> Sound Player
  PLAY trigger = OVTK_StimulationId_Beep
  STOP trigger = OVTK_StimulationId_BaselineStop
  File to play = ${Path_Data}/plugins/stimulation/ov_beep.wav
  Loop = False
#3 -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
0xc73e83ec Generic stream reader => #9
  Filename = $var{Sham File}
Stimulations=#3, Amplitude=#9 -> Graz visualization
  Show instruction = true
  Show feedback = true
  Delay feedback = false
  Show accuracy = false
  Predictions to integrate = 5
  Positive feedback only = true
