OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.2.0)
Comment
  Add Timeout If no train stimulation comes
Comment
  This Scenario is set for a g.tec cap with 2 amplifier g.USBamp
Comment
  OVERVIEW
  Change Settings on Scenario Configuration tab :
  Scripts path = folder to the scripts and config files (normally don't need to change that that if you keep the hierarchy)
  Training EEG File = link to the file for training (previous concatenate file)
Comment
  PRESENTATION
  Les options sont modifiables dnas l'onglet Scenario Configuration :
  Scripts path = dossier des scripts et des fichiers de configuration (normalement, il n'est pas nécessaire de changer cela si vous conservez la hiérarchie)
  Training EEG File = lien vers le fichier d'entrainement (le fichier concaténé précédemment)
Settings
  Scripts Path = ${Player_ScenarioDirectory}/scripts
  Training EEG File = ${Player_ScenarioDirectory}/signals/training.ov
  XP Name = XP
  Subject ID = C1
  Session = 1
  File Suffix = $var{XP Name}_$var{Subject ID}_S$var{Session}
  Epoch Duration = 4
  Epoch Offset = 0.5
  Class 1 = OVTK_GDF_Left
  Class 2 = OVTK_GDF_Right
  Filter Dimension = 4

Generic stream reader => #0
  Filename = $var{Training EEG File}
#0.Output stream 2 -> Timeout => #1
  Timeout delay = 10
  Output Stimulation = OVTK_StimulationId_Train
Input stimulations 1=#0.Output stream 3, Input stimulations 2=#1 -> Stimulation multiplexer => #2
#0.Output stream 2 -> Channel Selector "!EOG1;EOG2;EOG3;EMGg;EMGd" => #3
  Channel List = EOG1;EOG2;EOG3;EMGg;EMGd
  Action = Reject
  Channel Matching Method = Smart
Input stream 1=#3, Input stream 2=#2 -> Identity => #4
Input Signal=#4.Output stream 1, Input Stimulations=#4.Output stream 2 -> 4-8 => #5
  Low Cut Frequency = 4
  High Cut Frequency = 8
  Epoch Duration = $var{Epoch Duration}
  Epoch Offset = $var{Epoch Offset}
  Class 1 = $var{Class 1}
  Class 2 = $var{Class 2}
  Train Trigger = OVTK_StimulationId_Train
  Spatial Filter Configuration = $var{Scripts Path}/fbcsp-spatial-filter-4_8-$var{File Suffix}.xml
  Filter Dimension = $var{Filter Dimension}
Input Signal=#4.Output stream 1, Input Stimulations=#4.Output stream 2 -> 8-12 => #6
  Low Cut Frequency = 8
  High Cut Frequency = 12
  Epoch Duration = $var{Epoch Duration}
  Epoch Offset = $var{Epoch Offset}
  Class 1 = $var{Class 1}
  Class 2 = $var{Class 2}
  Train Trigger = OVTK_StimulationId_Train
  Spatial Filter Configuration = $var{Scripts Path}/fbcsp-spatial-filter-8_12-$var{File Suffix}.xml
  Filter Dimension = $var{Filter Dimension}
Input Signal=#4.Output stream 1, Input Stimulations=#4.Output stream 2 -> 12-16 => #7
  Low Cut Frequency = 12
  High Cut Frequency = 16
  Epoch Duration = $var{Epoch Duration}
  Epoch Offset = $var{Epoch Offset}
  Class 1 = $var{Class 1}
  Class 2 = $var{Class 2}
  Train Trigger = OVTK_StimulationId_Train
  Spatial Filter Configuration = $var{Scripts Path}/fbcsp-spatial-filter-12_16-$var{File Suffix}.xml
  Filter Dimension = $var{Filter Dimension}
Input Signal=#4.Output stream 1, Input Stimulations=#4.Output stream 2 -> 16-20 => #8
  Low Cut Frequency = 16
  High Cut Frequency = 20
  Epoch Duration = $var{Epoch Duration}
  Epoch Offset = $var{Epoch Offset}
  Class 1 = $var{Class 1}
  Class 2 = $var{Class 2}
  Train Trigger = OVTK_StimulationId_Train
  Spatial Filter Configuration = $var{Scripts Path}/fbcsp-spatial-filter-16_20-$var{File Suffix}.xml
  Filter Dimension = $var{Filter Dimension}
Input Signal=#4.Output stream 1, Input Stimulations=#4.Output stream 2 -> 20-24 => #9
  Low Cut Frequency = 20
  High Cut Frequency = 24
  Epoch Duration = $var{Epoch Duration}
  Epoch Offset = $var{Epoch Offset}
  Class 1 = $var{Class 1}
  Class 2 = $var{Class 2}
  Train Trigger = OVTK_StimulationId_Train
  Spatial Filter Configuration = $var{Scripts Path}/fbcsp-spatial-filter-20_24-$var{File Suffix}.xml
  Filter Dimension = $var{Filter Dimension}
Input Signal=#4.Output stream 1, Input Stimulations=#4.Output stream 2 -> 24-28 => #10
  Low Cut Frequency = 24
  High Cut Frequency = 28
  Epoch Duration = $var{Epoch Duration}
  Epoch Offset = $var{Epoch Offset}
  Class 1 = $var{Class 1}
  Class 2 = $var{Class 2}
  Train Trigger = OVTK_StimulationId_Train
  Spatial Filter Configuration = $var{Scripts Path}/fbcsp-spatial-filter-24_28-$var{File Suffix}.xml
  Filter Dimension = $var{Filter Dimension}
Input Signal=#4.Output stream 1, Input Stimulations=#4.Output stream 2 -> 28-32 => #11
  Low Cut Frequency = 28
  High Cut Frequency = 32
  Epoch Duration = $var{Epoch Duration}
  Epoch Offset = $var{Epoch Offset}
  Class 1 = $var{Class 1}
  Class 2 = $var{Class 2}
  Train Trigger = OVTK_StimulationId_Train
  Spatial Filter Configuration = $var{Scripts Path}/fbcsp-spatial-filter-28_32-$var{File Suffix}.xml
  Filter Dimension = $var{Filter Dimension}
Input Signal=#4.Output stream 1, Input Stimulations=#4.Output stream 2 -> 32-36 => #12
  Low Cut Frequency = 32
  High Cut Frequency = 36
  Epoch Duration = $var{Epoch Duration}
  Epoch Offset = $var{Epoch Offset}
  Class 1 = $var{Class 1}
  Class 2 = $var{Class 2}
  Train Trigger = $var{Class 2}
  Spatial Filter Configuration = $var{Scripts Path}/fbcsp-spatial-filter-32_36-$var{File Suffix}.xml
  Filter Dimension = $var{Filter Dimension}
Input Signal=#4.Output stream 1, Input Stimulations=#4.Output stream 2 -> 36-40 => #13
  Low Cut Frequency = 36
  High Cut Frequency = 40
  Epoch Duration = $var{Epoch Duration}
  Epoch Offset = $var{Epoch Offset}
  Class 1 = $var{Class 1}
  Class 2 = $var{Class 2}
  Train Trigger = OVTK_StimulationId_Train
  Spatial Filter Configuration = $var{Scripts Path}/fbcsp-spatial-filter-36_40-$var{File Suffix}.xml
  Filter Dimension = $var{Filter Dimension}
Input stimulations 1=#5, Input stimulations 2=#6, Input stimulations 3=#7, Input stimulations 4=#8, Input stimulations 5=#9, Input stimulations 6=#10, Input stimulations 7=#11, Input stimulations 8=#12, Input stimulations 9=#13 -> Stimulation multiplexer
-> Stimulation Validator
  Stimulation to count = OVTK_StimulationId_TrainCompleted
  Number for validation = 9
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
