OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.2.0)
Comment
  This Scenario is set for a g.tec cap with 2 amplifier g.USBamp
Comment
  OVERVIEW
  Change Settings on Scenario Configuration tab :
  Scripts path = folder to the scripts and config files (normally don't need to change that that if you keep the hierarchy)
  File to replay = link to the file for replay ({XP Name}_{Subject ID}_S{Session}_R{Run}_online-[{date}-{time}] files)
  File Suffix = Suffix for script files
Comment
  PRESENTATION
  Les options sont modifiables dans l'onglet Scenario Configuration :
  Scripts path = dossier des scripts et des fichiers de configuration (normalement, il n'est pas nécessaire de changer cela si vous conservez la hiérarchie)
  File to replay =  lien vers le fichier à rejouer (fichiers {XP Name}_{Subject ID}_S{Session}_R{Run}_online-[{date}-{time}])
  File Suffix = suffixe  pour les fichiers de config
Settings
  Scripts Path = ${Player_ScenarioDirectory}/scripts
  File to Replay = ${Player_ScenarioDirectory}/signals/File.ov
  File Suffix = XP_C1_S1
  Epoch Duration = 1
  Epoch Offset = 0.0625

Generic stream reader => #0
  Filename = $var{File to Replay}
#0.Output stream 3 -> Identity => #1
-> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Pause
#1 -> Sound Player
  PLAY trigger = OVTK_StimulationId_Beep
  STOP trigger = OVTK_StimulationId_BaselineStop
  File to play = ${Path_Data}/plugins/stimulation/ov_beep.wav
  Loop = False
#1 -> Identity => #4
#0.Output stream 2 -> Channel Selector "!EOG1;EOG2;EOG3;EMGg;EMGd"
  Channel List = EOG1;EOG2;EOG3;EMGg;EMGd
  Action = Reject
  Channel Matching Method = Smart
-> Temporal Filter => #6
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 4
  High Cut-off Frequency (Hz) = 8
  Low Cut-off Frequency 2 (Hz) = 8
  High Cut-off Frequency 2 (Hz) = 12
  Low Cut-off Frequency 3 (Hz) = 12
  High Cut-off Frequency 3 (Hz) = 16
  Low Cut-off Frequency 4 (Hz) = 16
  High Cut-off Frequency 4 (Hz) = 20
  Low Cut-off Frequency 5 (Hz) = 20
  High Cut-off Frequency 5 (Hz) = 24
  Low Cut-off Frequency 6 (Hz) = 24
  High Cut-off Frequency 6 (Hz) = 28
  Low Cut-off Frequency 7 (Hz) = 28
  High Cut-off Frequency 7 (Hz) = 32
  Low Cut-off Frequency 8 (Hz) = 32
  High Cut-off Frequency 8 (Hz) = 36
  Low Cut-off Frequency 9 (Hz) = 36
  High Cut-off Frequency 9 (Hz) = 40
#6.Output signal -> Spatial Filter => #7
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = $var{Scripts Path}/fbcsp-spatial-filter-4_8-$var{File Suffix}.xml
#6.Output signal 2 -> Spatial Filter => #8
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = $var{Scripts Path}/fbcsp-spatial-filter-8_12-$var{File Suffix}.xml
#6.Output signal 3 -> Spatial Filter => #9
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = $var{Scripts Path}/fbcsp-spatial-filter-12_16-$var{File Suffix}.xml
#6.Output signal 4 -> Spatial Filter => #10
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = $var{Scripts Path}/fbcsp-spatial-filter-16_20-$var{File Suffix}.xml
#6.Output signal 5 -> Spatial Filter => #11
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = $var{Scripts Path}/fbcsp-spatial-filter-20_24-$var{File Suffix}.xml
#6.Output signal 6 -> Spatial Filter => #12
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = $var{Scripts Path}/fbcsp-spatial-filter-24_28-$var{File Suffix}.xml
#6.Output signal 7 -> Spatial Filter => #13
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = $var{Scripts Path}/fbcsp-spatial-filter-28_32-$var{File Suffix}.xml
#6.Output signal 8 -> Spatial Filter => #14
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = $var{Scripts Path}/fbcsp-spatial-filter-32_36-$var{File Suffix}.xml
#6.Output signal 9 -> Spatial Filter => #15
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = $var{Scripts Path}/fbcsp-spatial-filter-36_40-$var{File Suffix}.xml
Input 1=#7, Input 2=#8, Input 3=#9, Input 4=#10, Input 5=#11, Input 6=#12, Input 7=#13, Input 8=#14, Input 9=#15 -> Signal Merger
-> Time based epoching
  Epoch 1 duration (in sec) = $var{Epoch Duration}
  Epoch 1 intervals (in sec) = $var{Epoch Offset}
-> Signal Power Log
-> Feature aggregator
-> Features Selector => #20
  Features List = :
  0x8d21ff41 = $var{Scripts Path}/features-selected-$var{File Suffix}.xml
Features=#20 -> Classifier processor => #21
  Filename to load configuration from = $var{Scripts Path}/classifier.xml
Stimulations=#4, Amplitude=#21.Hyperplane distance -> Graz visualization
  Show instruction = true
  Show feedback = true
  Delay feedback = false
  Show accuracy = false
  Predictions to integrate = 5
  Positive feedback only = true
