OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.2.0)
0x790d75b8 = Yann Renard
0x9f5c4075 = Signal Monitoring
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  Overview

  This scenario can be used in order
  to check the quality of the signals
  before starting an experiment.

  One should definitely
  check the quality of the signals
  and ensure that :

  - eye blinks are visible
  - jaw clenching are visible
  - alpha waves are visible when closing eyes
Comment
  The Temporal Filter
  box transform the signal
  so you can see what is actually
  used online.

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Temporal Filter => #1
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 1
  High Cut-off Frequency (Hz) = 40
Data=#1, Stimulations=#0.Stimulations -> Signal display "Raw signals"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
Data=#0.Signal stream, Stimulations=#0.Stimulations -> Signal display "Filtered signals"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
