OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.2.0)
0x790d75b8 = Jussi T. Lindgren
0x9f5c4075 = Incremental Motor Imagery
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  Overview

  This scenario demonstrates Motor Imagery with
  incremental learning. Its based on the original
  offline-trained scenario by
  Yann Renard and Fabien Lotte.

  note: the recorded files go to the
  folder where the scenario xml is located
  (${Player_ScenarioDirectory}/).
Comment
  The preprocessing of this scenario consists
  in re-referencing all the channels to the
  channel 2 (which was located on the nose) and
  to select the 10 channels over the motor cortex
  of the hands. The Spatial Filter box computes
  a surface laplacian filter and reduces the output
  to two channels: one on the left and one on the right.

  note: depending on your acquisition device,
  you may have to tune this part of the scenario
Comment
  Then comes the feature extraction part.

  The signal is filtered in the alpha/beta [8 24] Hz range.
  The filtered signal is then splitted in blocks of 1 second
  every 16th second and the logarithmic band power is
  computed thanks to the two Simple DSP and
  the Signal Average boxes.

  The matrices can then be converted in feature vectors.

  note: depending on what frequency range
  reacts best for the subject, you may have to tune
  this part of the scenario
Comment
  Finally, the feature vectors are classifier with an LDA
  classifier. Note that the probability vector of the classifier
  is sent to the Graz Visulization
  box for feedback !

  In order to display correct feedback,
  the Graz Visulization box expects a
  two-dimensional input describing probabilities
  of each class.

0x341d3912 0xc73e83ec Generic stream reader
  Filename = ${Path_Data}/scenarios/signals/bci-motor-imagery.ov

Acquisition client => #1
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#1.Stimulations -> Identity
-> Identity => #3
#1.Signal stream -> Reference Channel
  Channel = Nz
  Channel Matching Method = Smart
-> Channel Selector
  Channel List = C3;C4;FC3;FC4;C5;C1;C2;C6;CP3;CP4
  Action = Select
  Channel Matching Method = Smart
-> Spatial Filter "Surface Laplacian"
  Spatial Filter Coefficients = 4;0;-1;0;-1;-1;0;0;-1;0;0;4;0;-1;0;0;-1;-1;0;-1
  Number of Output Channels = 2
  Number of Input Channels = 10
  Filter matrix file =
-> Temporal Filter => #7
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 1
  High Cut-off Frequency (Hz) = 40
Input signal=#7, Input stimulations=#3 -> Stimulation based epoching
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Left
-> Time based epoching
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.0625
-> Signal Power Log
-> Feature aggregator => #11
Input signal=#7, Input stimulations=#3 -> Stimulation based epoching
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Right
-> Time based epoching
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.0625
-> Signal Power Log
-> Feature aggregator => #15
Stimulations=#3, Features for class 1=#11, Features for class 2=#15 -> Classifier trainer => #16
  Train trigger = OVTK_StimulationId_Train
  Filename to save configuration to = ${Player_ScenarioDirectory}/motor-imagery-bci-config-incremental-classifier.cfg
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_StimulationId_Label_01
  Class 2 label = OVTK_StimulationId_Label_02
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1
  Shrinkage: Force diagonal cov (DDA) = false
  Number of partitions for k-fold cross-validation test = 0
  Balance classes = true
#7 -> Time based epoching
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.0625
-> Signal Power Log
-> Feature aggregator => #19
Features=#19, Commands=#16 -> Classifier processor => #20
  Filename to load configuration from = ${Player_ScenarioDirectory}/motor-imagery-bci-config-incremental-classifier.cfg
Input stream 1=#1.Experiment information, Input stream 2=#1.Signal stream, Input stream 3=#1.Stimulations -> Generic stream writer
  Filename = ${Player_ScenarioDirectory}/signals/incremental-[$core{date}-$core{time}].ov
  Use compression = false
Graz Motor Imagery BCI Stimulator => #22
  Lua Script = ${Player_ScenarioDirectory}/motor-imagery-bci-graz-stimulator.lua
  Number of Trials for Each Class = 10
  First Class = OVTK_GDF_Left
  Second Class = OVTK_GDF_Right
  Baseline Duration (in sec) = 20
  Wait For Beep Duration (in sec) = 2
  Wait For Cue Duration (in sec) = 1
  Display Cue Duration (in sec) = 1.25
  Feedback Duration (in sec) = 3.75
  End of Trial Minimum Duration (in sec) = 1.5
  End of Trial Maximum Duration (in sec) = 3.5
Stimulations=#22, Amplitude=#20.Probability values -> Graz visualization
  Show instruction = true
  Show feedback = true
  Delay feedback = true
  Show accuracy = true
  Predictions to integrate = 5
  Positive feedback only = false
