OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.2.0)
0x8c1fc55b = 1.0
0x9f5c4075 = P300 Magic Card
0xf6b2e3fa = bci-examples
Comment
  P300 Magic Card

  Classifier training scenario

  Remember to change the
  filename in the Generic Stream
  Reader box

Generic stream reader => #0
  Filename = CHANGE_ME
#0.Output stream 2 -> Channel Selector
  Channel List = Cz;O1;O2
  Action = Select
  Channel Matching Method = Smart
-> Temporal Filter
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 1
  High Cut-off Frequency (Hz) = 20
-> Signal Decimation => #3
  Decimation factor = 4
#0.Output stream 3 -> Identity
-> Identity
-> Identity => #6
Input signal=#3, Input stimulations=#6 -> Stimulation based epoching
  Epoch duration (in sec) = 0.6
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_Target
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-epoch-average.cfg
-> Feature aggregator => #9
Input signal=#3, Input stimulations=#6 -> Stimulation based epoching
  Epoch duration (in sec) = 0.6
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_NonTarget
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-epoch-average.cfg
-> Feature aggregator => #12
Stimulations=#6, Features for class 1=#9, Features for class 2=#12 -> Classifier trainer
  Train trigger = OVTK_StimulationId_ExperimentStop
  Filename to save configuration to = ${Player_ScenarioDirectory}/p300-classifier.cfg
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1
  Shrinkage: Force diagonal cov (DDA) = false
  Number of partitions for k-fold cross-validation test = 5
  Balance classes = false
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
