OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.2.0)
0x8c1fc55b = 1.0
0x9f5c4075 = P300 Magic Card
0xf6b2e3fa = bci-examples
Comment
  P300 Magic Card

  Online scenario using
  previously trained classifier

  Flashing will start after
  20 secs

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Input stream 1=#0.Experiment information, Input stream 2=#0.Signal stream, Input stream 3=#0.Stimulations -> Generic stream writer
  Filename = ${Player_ScenarioDirectory}/signals/current-[$core{date}-$core{time}].ov
  Use compression = false
#0.Signal stream -> Channel Selector
  Channel List = Cz;O1;O2
  Action = Select
  Channel Matching Method = Smart
-> Temporal Filter
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 1
  High Cut-off Frequency (Hz) = 20
-> Signal Decimation => #4
  Decimation factor = 4
#0.Stimulations -> Identity
-> Identity => #6
Input signal=#4, Input stimulations=#6 -> Stimulation based epoching
  Epoch duration (in sec) = 0.6
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_VisualStimulationStart
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
-> Feature aggregator => #9
Features=#9 -> Classifier processor => #10
  Filename to load configuration from = ${Player_ScenarioDirectory}/p300-classifier.cfg
#6 -> Identity => #11
New input=#10.Labels, New input(1)=#11 -> P300 accumulator => #12
  Lua Script = ${Player_ScenarioDirectory}/p300-magic-card-accumulator.lua
  Card stimulation base = OVTK_StimulationId_Label_01
  Segment start = OVTK_StimulationId_TrialStart
  Segment stop = OVTK_StimulationId_TrialStop
Launch
  Lua Script = ${Player_ScenarioDirectory}/p300-magic-card-launch.lua
  Stimulation to send = OVTK_StimulationId_Label_00
  Time to send = 20
-> P300 Speller Stimulator => #14
  Start stimulation = OVTK_StimulationId_Label_00
  Row stimulation base = OVTK_StimulationId_Label_01
  Column stimulation base = OVTK_StimulationId_Label_07
  Number of rows = 6
  Number of columns = 6
  Number of repetitions = 12
  Number of trials = 10
  Flash duration (in sec) = 0.2
  No flash duration (in sec) = 0.1
  Inter-repetition delay (in sec) = 1
  Inter-trial delay (in sec) = 3
  Avoid neighbor flashing = false
-> Identity => #15
#14 -> Target Card Generation => #16
  Lua Script = ${Player_ScenarioDirectory}/p300-magic-card-stimulations-targets.lua
  Card Count = 12
  Stimulation Base = OVTK_StimulationId_Label_01
  Delay Before Sending (in sec) = 2
Sequence stimulations=#15, Target stimulations=#16, Card selection stimulations=#12 -> P300 Magic Card Visualisation
  Interface filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card.ui
  Background color = 90,90,90
  Target background color = 10,40,10
  Selected background color = 70,20,20
  Card stimulation base = OVTK_StimulationId_Label_01
  TCP Tagging Host address = localhost
  TCP Tagging Host port = 15361
  Background filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/openvibe-logo.png-offscreen
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/01.png
  Card filename(1) = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/02.png
  Card filename(2) = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/03.png
  Card filename(3) = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/04.png
  Card filename(4) = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/05.png
  Card filename(5) = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/06.png
  Card filename(6) = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/07.png
  Card filename(7) = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/08.png
  Card filename(8) = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/09.png
  Card filename(9) = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/10.png
  Card filename(10) = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/11.png
  Card filename(11) = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/12.png
