OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.2.0)
0x790d75b8 = Yann Renard
0x9f5c4075 = LDA Classifier Trainer
0xf36a1567 = http://openvibe.inria.fr/p300-speller-xdawn/
0xf6b2e3fa = xDAWN P300 Speller
0xf8034a49 = INRIA
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  The preprocessing of the signal is
  performed here...

  Note: be sure that the
  sampling rate and sample count
  per buffer you use in the acquisition
  server are compatible with the actual
  signal decimation factor
Comment
  Overview

  This scenario should be used to train
  the LDA classifier.

  Just configure the Generic Stream Reader
  box to point to the last file you recorded with
  scenario 1-acquisition and fast forward
  this scenario.

  At the end of the training, you will have an estimation
  of the classifier performance printed in the console.
  If this performance is lower than 70%, just run a new
  4-online session to have better results.

  Note: in order to run this scenario,
  the spatial filter should have been trained using
  2-train-xDAWN !

Generic stream reader => #0
  Filename = ${Player_ScenarioDirectory}/signals/CHANGE_ME.ov
#0.Output stream 2 -> Temporal Filter
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 1
  High Cut-off Frequency (Hz) = 20
-> Signal Decimation
  Decimation factor = 4
-> xDAWN Spatial Filter => #3
  Spatial Filter Coefficients = 9.970221e-001 -3.729500e-002 -1.177390e-002 2.814447e-002 -3.772446e-003 3.371324e-002 -5.480030e-003 8.893039e-003 -1.565213e-002 -9.956694e-003 -2.347757e-002 -2.312669e-003 -1.847227e-002 -7.550644e-004 -8.423513e-003 3.243223e-002 2.079848e-002 5.079737e-001 -2.835127e-002 8.259231e-002 -3.621803e-001 -2.004259e-001 -2.432480e-001 -1.861558e-001 -3.798139e-001 9.614762e-002 3.407766e-001 -2.158597e-001 3.720552e-001 7.500469e-002 -8.628774e-002 -3.182367e-002 5.923482e-002 4.124707e-001 2.083913e-001 -2.629501e-001 2.023081e-001 -2.658446e-001 4.022738e-001 -1.785569e-001 4.450742e-001 3.549239e-001 1.550204e-002 3.750389e-002 3.114249e-002 9.273764e-002 -7.093797e-002 -2.610929e-001
  Number of Output Channels = 3
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-spatial-filter.cfg
#0.Output stream 3 -> Identity => #4
Input signal=#3, Input stimulations=#4 -> Stimulation based epoching "Target Selection"
  Epoch duration (in sec) = 0.6
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_Target
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-epoch-average.cfg
-> Feature aggregator => #7
Input signal=#3, Input stimulations=#4 -> Stimulation based epoching "Non Target Selection"
  Epoch duration (in sec) = 0.6
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_NonTarget
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-epoch-average.cfg
-> Feature aggregator => #10
Stimulations=#4, Features for class 1=#7, Features for class 2=#10 -> Classifier trainer
  Train trigger = OVTK_StimulationId_ExperimentStop
  Filename to save configuration to = ${Player_ScenarioDirectory}/p300-classifier.cfg
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1
  Shrinkage: Force diagonal cov (DDA) = false
  Number of partitions for k-fold cross-validation test = 5
  Balance classes = false
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
