OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.2.0)
0x790d75b8 = Jussi T. Lindgren
0x9f5c4075 = Online Use
0xf36a1567 = http://openvibe.inria.fr/p300-speller-xdawn/
0xf6b2e3fa = xDAWN P300 Speller
0xf8034a49 = INRIA
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  Switch from file reader
  to Acquisiton client to use it online
Comment
  The preprocessing of the signal is
  performed here...

  Note: be sure that the
  sampling rate and sample count
  per buffer you use in the acquisition
  server are compatible with the actual
  signal decimation factor
Comment
  Overview

  This scenario can be used online once the
  spatial filter and the classifiers are trained.
  The Target Letter Generation
  box still proposes some targets in order to
  eventually train the spatial filter / classifier
  again, but you may want to disconnect that box
  in order to have a real free time use of
  the speller.

  The flash sequence starts automatically after 20 sec.

  You will then be presented a blue letter that
  you have to focus on, followed by a 12 times
  flashing sequence of the whole grid. The detected
  letter will be presented in green. This will be repeated
  10 times.

  If the performance of the system does not fit your
  requirements, just run 2-train-xDAWN and 3-train-classifier
  scenarios again on the data you just recorded.

  note: the recorded files go to the
  folder where the scenario xml is located
  (${Player_ScenarioDirectory}/).
Comment
  You can configure the Flashing Sequence
  and the Target Letter Generation in order to
  instruct the subject to spell a specific word.

  Set the target word in the Lua Stimulator (e.g. "openvibe")
  and adapt the number of trials in the P300 Speller Stimulator
  (e.g. 8 trials for the 8 letters in "openvibe")

  Note: If the number of letter in the chosen word does not match
  the number of trial, you won't be able to train xDAWN and
  the classifier on the recorded data.
Comment
  The stimulation part of the scenario is
  similar to scenario 1-acquisition.

  If you keep the Target Letter Generation
  box, you will be able to train the algorithms
  again on the recorded data.

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Input stream 1=#0.Experiment information, Input stream 2=#0.Signal stream, Input stream 3=#0.Stimulations -> Generic stream writer
  Filename = ${Player_ScenarioDirectory}/signals/p300-xdawn-online-[$core{date}-$core{time}].ov
  Use compression = false
#0.Signal stream -> Temporal Filter
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 1
  High Cut-off Frequency (Hz) = 20
-> Signal Decimation
  Decimation factor = 4
-> xDAWN Spatial Filter => #4
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-spatial-filter.cfg
#0.Stimulations -> Identity
-> Identity => #6
Input signal=#4, Input stimulations=#6 -> Stimulation based epoching
  Epoch duration (in sec) = 0.6
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_VisualStimulationStart
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-epoch-average.cfg
-> Feature aggregator => #9
Features=#9 -> Classifier processor => #10
  Filename to load configuration from = ${Player_ScenarioDirectory}/p300-classifier.cfg
#6 -> Identity => #11
New input=#10.Labels, New input(1)=#11 -> P300 accumulator => #12
  Lua Script = ${Player_ScenarioDirectory}/p300-speller-accumulator.lua
  Row stimulation base = OVTK_StimulationId_Label_01
  Column stimulation base = OVTK_StimulationId_Label_07
  Segment start = OVTK_StimulationId_TrialStart
  Segment stop = OVTK_StimulationId_TrialStop
#11 -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Pause
Launch
  Lua Script = ${Player_ScenarioDirectory}/p300-speller-launch.lua
  Stimulation to send = OVTK_StimulationId_Label_00
  Time to send = 20
-> P300 Speller Stimulator => #15
  Start stimulation = OVTK_StimulationId_Label_00
  Row stimulation base = OVTK_StimulationId_Label_01
  Column stimulation base = OVTK_StimulationId_Label_07
  Number of rows = 6
  Number of columns = 6
  Number of repetitions = 12
  Number of trials = 10
  Flash duration (in sec) = 0.2
  No flash duration (in sec) = 0.1
  Inter-repetition delay (in sec) = 1
  Inter-trial delay (in sec) = 3
  Avoid neighbor flashing = false
-> Target Letter Generation => #16
  Lua Script = ${Player_ScenarioDirectory}/p300-speller-target.lua
  Word to Spell (leave this empty if random) =
  Row Stimulation Base = OVTK_StimulationId_Label_01
  Column Stimulation Base = OVTK_StimulationId_Label_07
  Delay Before Sending (in sec) = 2
Sequence stimulations=#15, Target stimulations=#16, Row selection stimulations=#12.Stimulations, Column selection stimulations=#12.New output -> P300 Speller Visualization
  Interface filename = ${Path_Data}/plugins/simple-visualization/p300-speller.ui
  Row stimulation base = OVTK_StimulationId_Label_01
  Column stimulation base = OVTK_StimulationId_Label_07
  Flash background color = 5,5,5
  Flash foreground color = 100,100,100
  Flash font size = 60
  No flash background color = 0,0,0
  No flash foreground color = 25,25,25
  No flash font size = 40
  Target background color = 20,20,70
  Target foreground color = 10,10,30
  Target font size = 40
  Selected background color = 10,40,10
  Selected foreground color = 60,100,60
  Selected font size = 40
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-speller-visualization.cfg
