OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.2.0)
0x790d75b8 = Jussi T. Lindgren
0x9f5c4075 = Basic P300 1/4
0xf36a1567 = http://openvibe.inria.fr/openvibe-p300-speller/
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  The use of these P300 examples are described in

  http://openvibe.inria.fr/openvibe-p300-speller/
Comment
  Overview

  This scenario can be used as a first
  step to collect some training data. The
  data will later be used to train a
  classifier for online use.

  The flast sequence will start after 20 sec.

  You will then be presented a blue letter that
  you have to focus on, followed by a 12 times
  flashing sequence of the whole grid. This will
  be repeated 10 times.

  note: the recorded files go to the
  folder where the scenario xml is located
  (${Player_ScenarioDirectory}/).
Comment
  The P300 Speller Visualization
  sends the markers (stimulations) directly to
  Acquisition Server using TCP Tagging.
Comment
  Here the data is streamed from the server to a file.
Comment
  This box will write the recorded file under
  the directory where the scenario was opened
  from (token ${Player_ScenarioDirectory})

Launch
  Lua Script = ${Player_ScenarioDirectory}/p300-speller-launch.lua
  Stimulation to send = OVTK_StimulationId_Label_00
  Time to send = 20
-> P300 Speller Stimulator => #1
  Start stimulation = OVTK_StimulationId_Label_00
  Row stimulation base = OVTK_StimulationId_Label_01
  Column stimulation base = OVTK_StimulationId_Label_07
  Number of rows = 6
  Number of columns = 6
  Number of repetitions = 12
  Number of trials = 10
  Flash duration (in sec) = 0.2
  No flash duration (in sec) = 0.1
  Inter-repetition delay (in sec) = 1
  Inter-trial delay (in sec) = 3
  Avoid neighbor flashing = false
-> Target Letter Generation => #2
  Lua Script = ${Player_ScenarioDirectory}/p300-speller-target.lua
  Word to Spell (leave this empty if random) =
  Row Stimulation Base = OVTK_StimulationId_Label_01
  Column Stimulation Base = OVTK_StimulationId_Label_07
  Delay Before Sending (in sec) = 2
Sequence stimulations=#1, Target stimulations=#2 -> P300 Speller Visualization
  Interface filename = ${Path_Data}/plugins/simple-visualization/p300-speller.ui
  Row stimulation base = OVTK_StimulationId_Label_01
  Column stimulation base = OVTK_StimulationId_Label_07
  Flash background color = 5,5,5
  Flash foreground color = 100,100,100
  Flash font size = 60
  No flash background color = 0,0,0
  No flash foreground color = 25,25,25
  No flash font size = 40
  Target background color = 20,20,70
  Target foreground color = 10,10,30
  Target font size = 40
  Selected background color = 10,40,10
  Selected foreground color = 60,100,60
  Selected font size = 40
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-speller-visualization.cfg

Acquisition client => #4
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Input stream 1=#4.Experiment information, Input stream 2=#4.Signal stream, Input stream 3=#4.Stimulations -> Generic stream writer
  Filename = ${Player_ScenarioDirectory}/signals/p300-train-[$core{date}-$core{time}].ov
  Use compression = false
#4.Stimulations -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
