OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.2.0)
0x790d75b8 = Thibaut Monseigne
0x8c1fc55b = 1.0
0x9f5c4075 = Classification Riemann Classic Compute Reference  Example
0xf6b2e3fa = bci-examples
0xf8034a49 = Inria
Comment
  Input Signal
Comment
  Compute Covariance
Comment
  Compute Mean
Settings
  Directory = ${Player_ScenarioDirectory}
  LWF Mean = Mean-Riemann-LWF.csv
  Cor Mean = Mean-Riemann-COR.csv
  Stimulation = OVTK_StimulationId_TrainCompleted
  Log Level = Information

Noise generator
  Channel count = 4
  Sampling frequency = 512
  Generated epoch sample count = 32
  Noise type = Uniform
-> Simple DSP
  Equation = (x+1)*10
-> Time based epoching => #2
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.5
-> LWF => #3
  Estimator = Ledoit and Wolf
  Center Data = true
  Log Level = $var{Log Level}
#2 -> COR => #4
  Estimator = Pearson Correlation
  Center Data = true
  Log Level = $var{Log Level}
Timeout => #5
  Timeout delay = 60
  Output Stimulation = OVTK_StimulationId_TrainCompleted
Input Stimulation=#5, Input Covariance Matrix 1=#3 -> Covariance Mean Calculator
  Metric = Riemann
  Filename to save Matrix (CSV, empty to not save) = $var{Directory}/$var{LWF Mean}
  Stimulation name that triggers the compute = $var{Stimulation}
  Log Level = $var{Log Level}
#5 -> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
Input Stimulation=#5, Input Covariance Matrix 1=#4 -> Covariance Mean Calculator
  Metric = Riemann
  Filename to save Matrix (CSV, empty to not save) = $var{Directory}/$var{Cor Mean}
  Stimulation name that triggers the compute = $var{Stimulation}
  Log Level = $var{Log Level}
