OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.2.0)
0x790d75b8 = Thibaut Monseigne
0x8c1fc55b = 1.0
0x9f5c4075 = Classification Riemann Classic Training Example
0xf6b2e3fa = bci-examples
0xf8034a49 = Inria
Comment
  Input Signal
Comment
  Compute Covariance
Comment
  Compute Feature
  (Need to run previous scenario)
Comment
  Display
Comment
  Classify
Settings
  Directory = ${Player_ScenarioDirectory}
  Model Filename = Riemann-Classic-Training-Model.xml
  LWF Mean = Mean-Riemann-LWF.csv
  COR Mean = Mean-Riemann-COR.csv
  Log Level = Information

Noise generator
  Channel count = 4
  Sampling frequency = 512
  Generated epoch sample count = 32
  Noise type = Uniform
-> Simple DSP => #1
  Equation = (x+1)*10
-> LWF => #2
  Estimator = Ledoit and Wolf
  Center Data = true
  Log Level = $var{Log Level}
-> Tangent Space => #3
  Tangent Space = true
  Filename to Reference Matrix (CSV, empty for Identity) = $var{Directory}/$var{LWF Mean}
  Log Level = $var{Log Level}
-> Matrix Display "LWF Tangent"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#2 -> Squeeze => #5
  Tangent Space = false
  Filename to Reference Matrix (CSV, empty for Identity) =
  Log Level = $var{Log Level}
-> Matrix Display "LWF Squeeze"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#1 -> COR => #7
  Estimator = Pearson Correlation
  Center Data = true
  Log Level = $var{Log Level}
-> Tangent Space => #8
  Tangent Space = true
  Filename to Reference Matrix (CSV, empty for Identity) = $var{Directory}/$var{COR Mean}
  Log Level = $var{Log Level}
-> Matrix Display "COR Tangent"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#7 -> Squeeze => #10
  Tangent Space = false
  Filename to Reference Matrix (CSV, empty for Identity) =
  Log Level = $var{Log Level}
-> Matrix Display "COR Squeeze"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Timeout => #12
  Timeout delay = 20
  Output Stimulation = OVTK_StimulationId_Train
Stimulations=#12, Features for class 1=#3, Features for class 2=#5, Features for class 3=#8, Features for class 4=#10 -> Classifier trainer
  Train trigger = OVTK_StimulationId_Train
  Filename to save configuration to = $var{Directory}/$var{Model Filename}
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_StimulationId_Label_01
  Class 2 label = OVTK_StimulationId_Label_02
  Class 3 label = OVTK_StimulationId_Label_03
  Class 4 label = OVTK_StimulationId_Label_04
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1
  Shrinkage: Force diagonal cov (DDA) = false
  Shrinkage: Force diagonal cov (DDA)(1) = false
  Balance classes = true
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
