OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.2.0)
0x790d75b8 = Thibaut Monseigne
0x8c1fc55b = 1.0
0x9f5c4075 = Classification Riemann Classic Testing Example
0xf6b2e3fa = bci-examples
0xf8034a49 = Inria
Comment
  Input Signal
Comment
  Classes Switch
Comment
  Compute Covariance
Comment
  Compute Feature
  (Need to run 2 previous scenarios)
Comment
  Classifier processor
  (Need to run previous scenario)
Comment
  Stop Scenario after Total Time
Settings
  Directory = ${Player_ScenarioDirectory}
  Model Filename = Riemann-Classic-Training-Model.xml
  LWF Mean = Mean-Riemann-LWF.csv
  COR Mean = Mean-Riemann-COR.csv
  Delay Between Stimulation = 10
  Number of Class = 4
  Total Time = 40
  Log Level = Information

Noise generator
  Channel count = 4
  Sampling frequency = 512
  Generated epoch sample count = 32
  Noise type = Uniform
-> Simple DSP => #1
  Equation = (x+1)*10
Lua Stimulator => #2
  Lua Script = ${Player_ScenarioDirectory}/scripts/stimulation-regulator.lua
  Delay (s) = $var{Delay Between Stimulation}
  Iteration = $var{Number of Class}
  Increment Stimulation = true
Triggers=#2, Matrix=#1 -> Stream Switch => #3
  Default to output 1 = false
  Switch stim for output 1 = OVTK_StimulationId_Label_01
  Switch stim for output 2 = OVTK_StimulationId_Label_02
  Switch stim for output 3 = OVTK_StimulationId_Label_03
  Switch stim for output 4 = OVTK_StimulationId_Label_00
#3.Output -> LWF
  Estimator = Ledoit and Wolf
  Center Data = true
  Log Level = $var{Log Level}
-> Tangent Space => #5
  Tangent Space = true
  Filename to Reference Matrix (CSV, empty for Identity) = $var{Directory}/$var{LWF Mean}
  Log Level = $var{Log Level}
#3.Output(1) -> LWF
  Estimator = Ledoit and Wolf
  Center Data = true
  Log Level = $var{Log Level}
-> Squeeze => #7
  Tangent Space = false
  Filename to Reference Matrix (CSV, empty for Identity) =
  Log Level = $var{Log Level}
#3.New output -> COR
  Estimator = Pearson Correlation
  Center Data = true
  Log Level = $var{Log Level}
-> Tangent Space => #9
  Tangent Space = true
  Filename to Reference Matrix (CSV, empty for Identity) = $var{Directory}/$var{COR Mean}
  Log Level = $var{Log Level}
#3.New output(1) -> COR
  Estimator = Pearson Correlation
  Center Data = true
  Log Level = $var{Log Level}
-> Squeeze => #11
  Tangent Space = false
  Filename to Reference Matrix (CSV, empty for Identity) =
  Log Level = $var{Log Level}
Input stream 1=#5, Input stream 2=#7, Input stream 3=#9, Input stream 4=#11 -> Streamed matrix multiplexer => #12
Features=#12 -> Classifier processor => #13
  Filename to load configuration from = $var{Directory}/$var{Model Filename}
#2 -> Stimulation listener
  Log level to use = Information
#2 -> Identity => #15
Targets=#15, Classification results=#13.Labels -> Confusion Matrix
  Percentages = true
  Sums = false
  Class 1 = OVTK_StimulationId_Label_01
  Class 2 = OVTK_StimulationId_Label_02
  Class 3 = OVTK_StimulationId_Label_03
  Class 4 = OVTK_StimulationId_Label_04
-> Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false

Timeout
  Timeout delay = $var{Total Time}
  Output Stimulation = OVTK_StimulationId_ExperimentStop
-> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Pause
