OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.2.0)
0x790d75b8 = Thibaut Monseigne
0x8c1fc55b = 1.0
0x9f5c4075 = Classification Riemann Classic Compute Reference Example
0xf6b2e3fa = bci-examples
0xf8034a49 = Inria
Comment
  Compute Covariance
Comment
  Compute Mean
Settings
  Data = ${Path_Data}/scenarios/signals/bci-motor-imagery.ov
  Directory = ${Player_ScenarioDirectory}
  Mean = Mean-Riemann.csv
  Stimulation = OVTK_GDF_End_Of_Session
  Log Level = Information

Generic stream reader => #0
  Filename = $var{Data}
#0.Output stream 2 -> Reference Channel
  Channel = Nz
  Channel Matching Method = Smart
-> Channel Selector
  Channel List = C3;C4;FC3;FC4;C5;C1;C2;C6;CP3;CP4
  Action = Select
  Channel Matching Method = Smart
-> Temporal Filter => #3
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 24
#0.Output stream 3 -> Identity => #4
-> Player Controller
  Stimulation name = OVTK_StimulationId_EndOfFile
  Action to perform = Stop
Input stream 1=#3, Input stream 2=#4 -> Identity => #6
Input signal=#6.Output stream 1, Input stimulations=#6.Output stream 2 -> Stimulation based epoching
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Left
-> Time based epoching
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.0625
-> LWF => #9
  Estimator = Ledoit and Wolf
  Center Data = true
  Log Level = $var{Log Level}
Input signal=#6.Output stream 1, Input stimulations=#6.Output stream 2 -> Stimulation based epoching
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Right
-> Time based epoching
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.0625
-> LWF => #12
  Estimator = Ledoit and Wolf
  Center Data = true
  Log Level = $var{Log Level}
Input Stimulation=#6.Output stream 2, Input Covariance Matrix 1=#9, Input Covariance Matrix 2=#12 -> Covariance Mean Calculator
  Metric = Riemann
  Filename to save Matrix (CSV, empty to not save) = $var{Directory}/$var{Mean}
  Stimulation name that triggers the compute = $var{Stimulation}
  Log Level = $var{Log Level}
