OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.2.0)
0x790d75b8 = Thibaut Monseigne
0x8c1fc55b = 1.0
0x9f5c4075 = Classification Riemann Classic Testing Example
0xf6b2e3fa = bci-examples
0xf8034a49 = Inria
Comment
  Compute Covariance
Comment
  Compute Feature
  (Need to run 2 previous scenarios)
Comment
  Classifier processor
  (Need to run previous scenario)
Settings
  Data = ${Path_Data}/scenarios/signals/bci-motor-imagery.ov
  Directory = ${Player_ScenarioDirectory}
  Model Filename = Riemann-Classic-Training-Model.xml
  Mean = Mean-Riemann.csv
  Stimulation Class 1 = OVTK_GDF_Left
  Stimulation Class 2 = OVTK_GDF_Right
  Log Level = Information

Generic stream reader => #0
  Filename = $var{Data}
#0.Output stream 3 -> Identity => #1
-> Player Controller
  Stimulation name = OVTK_StimulationId_EndOfFile
  Action to perform = Pause
#1 -> Identity => #3
#0.Output stream 2 -> Reference Channel
  Channel = Nz
  Channel Matching Method = Smart
-> Channel Selector
  Channel List = C3;C4;FC3;FC4;C5;C1;C2;C6;CP3;CP4
  Action = Select
  Channel Matching Method = Smart
-> Temporal Filter
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 24
-> Time based epoching
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.0625
-> LWF
  Estimator = Ledoit and Wolf
  Center Data = true
  Log Level = $var{Log Level}
-> Tangent Space => #9
  Tangent Space = true
  Filename to Reference Matrix (CSV, empty for Identity) = $var{Directory}/$var{Mean}
  Log Level = $var{Log Level}
Features=#9 -> Classifier processor => #10
  Filename to load configuration from = $var{Directory}/$var{Model Filename}
Targets=#3, Classification results=#10.Labels -> Confusion Matrix
  Percentages = true
  Sums = false
  Class 1 = $var{Stimulation Class 1}
  Class 2 = $var{Stimulation Class 2}
-> Matrix Display "Confusion Matrix"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#10.Hyperplane distance -> Simple DSP => #13
  Equation = x
Stimulations=#3, Amplitude=#13 -> Graz visualization
  Show instruction = true
  Show feedback = true
  Delay feedback = false
  Show accuracy = true
  Predictions to integrate = 5
  Positive feedback only = false
