OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.2.0)
0x790d75b8 = Thibaut Monseigne
0x8c1fc55b = 1.0
0x9f5c4075 = Matrix Classification Training Example
0xf6b2e3fa = bci-examples
0xf8034a49 = Inria
Comment
  Compute Covariance
Comment
  Display / Classify
Settings
  Data = ${Path_Data}/scenarios/signals/bci-motor-imagery.ov
  Directory = ${Player_ScenarioDirectory}
  Model Filename = Riemann-Training-Model.xml
  Mean = Mean-Riemann.csv
  Stimulation Class 1 = OVTK_GDF_Left
  Stimulation Class 2 = OVTK_GDF_Right
  Log Level = Information

Generic stream reader => #0
  Filename = $var{Data}
#0.Output stream 2 -> Reference Channel
  Channel = Nz
  Channel Matching Method = Smart
-> Channel Selector
  Channel List = C3;C4;FC3;FC4;C5;C1;C2;C6;CP3;CP4
  Action = Select
  Channel Matching Method = Smart
-> Temporal Filter => #3
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 24
#0.Output stream 3 -> Identity => #4
-> Player Controller
  Stimulation name = OVTK_StimulationId_EndOfFile
  Action to perform = Stop
Input stream 1=#3, Input stream 2=#4 -> Identity => #6
Input signal=#6.Output stream 1, Input stimulations=#6.Output stream 2 -> Stimulation based epoching
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = $var{Stimulation Class 1}
-> Time based epoching
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.0625
-> LWF => #9
  Estimator = Ledoit and Wolf
  Center Data = true
  Log Level = $var{Log Level}
-> 0x341d3912 Matrix Display "Cov Left"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Input signal=#6.Output stream 1, Input stimulations=#6.Output stream 2 -> Stimulation based epoching
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = $var{Stimulation Class 2}
-> Time based epoching
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.0625
-> LWF => #13
  Estimator = Ledoit and Wolf
  Center Data = true
  Log Level = $var{Log Level}
Stimulations=#6.Output stream 2, Matrix for class 1=#9, Matrix for class 2=#13 -> Matrix Classifier Trainer
  Train trigger = OVTK_StimulationId_Train
  Filename to save classifier model = ${Player_ScenarioDirectory}/$var{Model Filename}
  Method = Minimum Distance to Mean (MDM)
  Metric = Riemann
  Log Level = $var{Log Level}
  Class 1 label = $var{Stimulation Class 1}
  Class 2 label = $var{Stimulation Class 2}
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
#13 -> 0x341d3912 Matrix Display "Cov Right"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
