OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.2.0)
0x790d75b8 = Thibaut Monseigne
0x84009d7c = Light scenario that works with Hello World game
0x8c1fc55b = 1.0
0x9f5c4075 = Hello World Game
0xf6b2e3fa = Games
0xf8034a49 = Inria
Comment
  Signal = Sin(time)
  Game is available in the Repository : https://gitlab.inria.fr/openvibe/unity-games/hello-bidirectionnal
Comment
  Remarques :  :
  Le Jeu doit être lancé en premier
  pour eviter des retards dans OpenViBE du fait de la recherche de canaux LSL.
  Unity gère mieux la recherche continue de canaux LSL.

   Remarks: :
  The Game must be launched first
  to avoid delays in OpenViBE due to LSL channel search.
  Unity better manages the continuous search for LSL channels.

Time signal
  Sampling frequency = 256
  Generated epoch sample count = 1
-> Simple DSP => #1
  Equation = sin(x)
Clock stimulator => #2
  Interstimulation interval (in sec) = 5
  Stimulation = OVTK_StimulationId_Label_00
Input signal=#1, Input stimulations=#2 -> Hello Bidirectionnal Game => #3
#3.Output matrix -> Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#3.Output stimulations -> Stimulation listener
  Log level to use = Information
Input 1=#1, Input 2=#2 -> 0x341d3912 LSL Communication
  Input 1 Stream Name = ovOutSignal
  Input 2 Stream Name = ovOutMarkers
  Output 1 Stream Name = ovInSignal
  Output 2 Stream Name = ovInMarkers
#2 -> Stimulation listener
  Log level to use = Information
