OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.2.0)
Comment
  Game is available in the Repository : https://gitlab.inria.fr/openvibe/unity-games/hello-sender
  Run the Game before the Script
Comment
  Remarks :
  It is currently impossible to send and receive information by LSL in the same scenario.
  Indeed, the LSL library waits to receive its flow (or gives up) before moving on.
  In addition, OpenViBE is not multi-process.
  It blocks until it has received its flow (or gives up).
  It is therefore advisable to launch the transmitter before the receive
  or plan for a shorter but repeated stream search after launch in the event of a startup failure.

0x341d3912 LSL Communication
  Output 1 Stream Name = ovSignal
  Output 2 Stream Name = ovMarker

Hello Sender Game => #1
#1.Output matrix -> Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#1.Output stimulations -> Stimulation listener
  Log level to use = Information
