OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.2.0)
0x790d75b8 = Thibaut Monseigne
0x84009d7c = Light scenario that works with Hello World game
0x8c1fc55b = 1.0
0x9f5c4075 = Hello World Game
0xf6b2e3fa = Games
0xf8034a49 = Inria
Comment
  Signal = Sin(time)
  Game is available in the Repository : https://gitlab.inria.fr/openvibe/unity-games/hello-world
Comment
  Remarks :
  It is currently impossible to send and receive information by LSL in the same scenario.
  Indeed, the LSL library waits to receive its flow (or gives up) before moving on.
  In addition, OpenViBE is not multi-process.
  It blocks until it has received its flow (or gives up).
  It is therefore advisable to launch the transmitter before the receiver.
  Or plan for a shorter but repeated stream search after launch in the event of a startup failure.

Time signal
  Sampling frequency = 256
  Generated epoch sample count = 1
-> Simple DSP => #1
  Equation = sin(x)
Clock stimulator => #2
  Interstimulation interval (in sec) = 5
  Stimulation = OVTK_StimulationId_Label_00
Input signal=#1, Input stimulations=#2 -> Hello World Game
Input 1=#1, Input 2=#2 -> 0x341d3912 LSL Communication
  Input 1 Stream Name = ovSignal
  Input 2 Stream Name = ovMarkers
