OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.4.0)

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Channel Selector "1:3" => #1
  Channel List = 1:3
  Action = Select
  Channel Matching Method = Smart
Data=#1 -> Signal display "Low-Noise Accelerometer"
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 15
  Vertical Offset = 0
  Time Scale = 25
  Bottom ruler = true
  Left ruler = true
  Multiview = false
#0.Signal stream -> Channel Selector "4" => #3
  Channel List = 4
  Action = Select
  Channel Matching Method = Smart
Data=#3 -> Signal display "PPG"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = true
  Multiview = false
#0.Signal stream -> Channel Selector "5"
  Channel List = 5
  Action = Select
  Channel Matching Method = Smart
-> EDA Tonic and Phasic => #6
Data=#6.Tonic component -> Signal display "TONIC"
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 30
  Vertical Scale = 2000
  Vertical Offset = 0
  Time Scale = 120
  Bottom ruler = true
  Left ruler = true
  Multiview = false
Data=#6.Phasic component -> Signal display "PHASIC"
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 30
  Vertical Scale = 1000
  Vertical Offset = 0
  Time Scale = 120
  Bottom ruler = true
  Left ruler = true
  Multiview = false
#0.Signal stream -> Channel Selector "6:8" => #9
  Channel List = 6:8
  Action = Select
  Channel Matching Method = Smart
Data=#9 -> Signal display "Gyroscope"
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 500
  Vertical Offset = 0
  Time Scale = 25
  Bottom ruler = true
  Left ruler = true
  Multiview = false
