OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.2.0)
Comment
  File Reader
  10 (+1 ref) channels, 512 Hz, 32 samples per block
  Hand Motor Imagery session
Comment
  Bipolar
  We compute the bipolar channel C3 - C4
Comment
  Temporal Filter
  Filter in the alpha band
Comment
  Band Power
  Average of the squared signal
  on blocks of 32 samples
Comment
  Epoch Average
  Moving average over the last 32 epochs
Comment
  Advanced Visualization:
  Continuous Bars

  Displays the alpha band power level continuously
  in form of a colored vertical bar series.

  The power being a positive value, we ticked the
  corresponding box in the settings.

Generic stream reader => #0
  Filename = ${Path_Data}/scenarios/signals/bci-motor-imagery.ov
#0.Output stream 1 -> Reference Channel => #1
  Channel = Nz
  Channel Matching Method = Smart
-> Channel Selector "C3" => #2
  Channel List = C3
  Action = Select
  Channel Matching Method = Smart
#1 -> Channel Selector "C4" => #3
  Channel List = C4
  Action = Select
  Channel Matching Method = Smart
Input - A=#2, Input - B=#3 -> Simple DSP "C3 - C4"
  Equation = A-B
-> Temporal filter "8-15 Hz"
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 15
-> Simple DSP "x²"
  Equation = x*x
-> Signal average
-> Epoch average => #8
  Averaging type = Moving epoch average (Immediate)
  Epoch count = 16
Matrix=#8 -> Continuous Bars
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Temporal Coherence = Time Locked
  Time Scale = 20
  Matrix Count = 50
  Positive Data Only ? = true
  Gain = 0.05
  Caption =
  Tranlucency = 1
  Color = ${AdvancedViz_DefaultColorGradient}
