OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.2.0)
Comment
  File Reader
  10 (+1 ref) channels, 512 Hz, 32 samples per block
  Hand Motor Imagery session
Comment
  Reference Channel
  The reference channel is 'Nz'
Comment
  Temporal Filter
  Filter below 50Hz
Comment
  Epoching
  We slice the signal into 1s epochs
  every 1/16th second.
  We then average the last 32 epochs
Comment
  Spectral Analysis
  Apply a FFT to the input signal
  We only take the amplitude output
Comment
  Advanced Visualization:
  Instant Bitmap

  Displays the spectrum in form of
  2D color map

Generic stream reader => #0
  Filename = ${Path_Data}/scenarios/signals/bci-motor-imagery.ov
#0.Output stream 1 -> Reference Channel
  Channel = Nz
  Channel Matching Method = Smart
-> Temporal filter "2-48 Hz"
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 2
  High cut frequency (Hz) = 48
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.0625
-> Epoch average
  Averaging type = Moving epoch average
  Epoch count = 4
-> Spectral Analysis => #5
  Amplitude = true
  Phase = false
  Real Part = false
  Imaginary Part = false
#5.Amplitude -> Instant Bitmap
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Gain = 0.025
  Caption =
  Color = ${AdvancedViz_DefaultColorGradient}
