OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.2.0)
Comment
  File Reader
  10 (+1 ref) channels, 512 Hz, 32 samples per block
  Hand Motor Imagery session
Comment
  Temporal Filter
  Filter in a large alpha-beta band
Comment
  Epoching
  We select the right hand trials:
  4 second epoch, 0.5s after the
  instruction
Comment
  Reference Channel
  The reference channel is 'Nz'
Comment
  Spatial filter
  We compute the 2 surface Laplacians
  around C3 and C4.
Comment
  Epoch Average
  Cumulative (infinite) average
Comment
  Spectral Analysis
  Apply a FFT to the input signal.
  We only take the amplitude output
Comment
  Advanced Visualization:
  Instant Multi-Oscilloscope

  Displays the spectrum of the average
  of all right-hand trials

Generic stream reader => #0
  Filename = ${Path_Data}/scenarios/signals/bci-motor-imagery.ov
#0.Output stream 1 -> Signal Decimation
  Decimation factor = 8
-> Temporal filter "8-30 Hz" => #2
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 30
Input signal=#2, Input stimulations=#0.Output stream 2 -> Stimulation based epoching "Right hand trials"
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Right
-> Reference Channel
  Channel = Nz
  Channel Matching Method = Smart
-> Channel Selector
  Channel List = C3;C4;FC3;FC4;C5;C1;C2;C6;CP3;CP4
  Action = Select
  Channel Matching Method = Smart
-> Spatial Filter "Surface Laplacian"
  Spatial Fitler Coefficients = 4;0;-1;0;-1;-1;0;0;-1;0;0;4;0;-1;0;0;-1;-1;0;-1
  Number of Output Channels = 2
  Number of Input Channels = 10
  Filter matrix file =
-> Channel Rename
  New channel names = L.C3;L.C4
-> Epoch average
  Averaging type = Cumulative average
  Epoch count = 4
-> Spectral Analysis => #9
  Amplitude = true
  Phase = false
  Real Part = false
  Imaginary Part = false
#9.Amplitude -> Instant Multi Oscilloscope
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Positive Data Only ? = true
  Gain = 0.0125
  Caption =
  Tranlucency = 1
  Color = ${AdvancedViz_DefaultColorGradient}
