OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.2.0)
Comment
  File Reader
  10 (+1 ref) channels, 512 Hz, 32 samples per block
  Hand Motor Imagery session
Comment
  Temporal filtering
  We remove the 50 Hz noise with a notch filter
  and select only the frequency range between
  1 and 40 Hz.
Comment
  Reference Channel
  The reference channel is 'Nz'
Comment
  Spatial filter
  We compute the surface Laplacians
  around C3 and C4.
Comment
  Topographies
  We display the alpha band power
  on a 2D and a 3D map
Comment
  Spectral analysis
  The decimation downsamples the
  signal from 512 Hz to 64 Hz.
  The spectrum is thus computed up to 32Hz

Generic stream reader => #0
  Filename = ${Path_Data}/scenarios/signals/bci-motor-imagery.ov
#0.Output stream 2 -> Temporal filter "8-30 Hz"
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 1
  High Cut-off Frequency (Hz) = 40
-> Reference Channel => #2
  Channel = Nz
  Channel Matching Method = Smart
Matrix=#2 -> Signal
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Temporal Coherence = Time Locked
  Time Scale = 20
  Matrix Count = 50
  Positive Data Only ? = false
  Gain = 0.01
  Caption =
  Tranlucency = 1
  Color = ${AdvancedViz_DefaultColor}
#2 -> Channel Selector
  Channel List = C3;C4;FC3;FC4;C5;C1;C2;C6;CP3;CP4
  Action = Select
  Channel Matching Method = Smart
-> Spatial Filter "Surface Laplacian"
  Spatial Fitler Coefficients = 4;0;-1;0;-1;-1;0;0;-1;0;0;4;0;-1;0;0;-1;-1;0;-1
  Number of Output Channels = 2
  Number of Input Channels = 10
  Filter matrix file =
-> Channel Rename
  New channel names = L.C3;L.C4
-> Temporal filter "8-30 Hz"
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 30
-> Signal Decimation
  Decimation factor = 8
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = .0625
-> Spectral Analysis => #10
  Amplitude = true
  Phase = false
  Real Part = false
  Imaginary Part = false
#10.Amplitude -> Epoch average => #11
  Averaging type = Moving epoch average (Immediate)
  Epoch count = 5
Matrix=#11 -> T/F Analysis
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Temporal Coherence = Time Locked
  Time Scale = 20
  Matrix Count = 50
  Gain = 0.01
  Caption =
  Color = ${AdvancedViz_DefaultColorGradient}
#11 -> Spectrum
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Positive Data Only ? = false
  Gain = 0.01
  Caption =
  Tranlucency = 1
  Color = ${AdvancedViz_DefaultColorGradient}
#2 -> Temporal filter "8-15 Hz"
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 15
-> Simple DSP "x²"
  Equation = x*x
-> Signal average
-> Epoch average => #17
  Averaging type = Moving epoch average (Immediate)
  Epoch count = 32
-> 2D Topography
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Gain = 0.025
  Caption =
  Color = ${AdvancedViz_DefaultColorGradient}
#17 -> 3D Topography
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Gain = 0.03
  Caption =
  Color = ${AdvancedViz_DefaultColorGradient}
