OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.2.0)
0x790d75b8 = Thibaut Monseigne
0x8c1fc55b = 1.0
0x9f5c4075 = Matrix Classification Training Example
0xf6b2e3fa = bci-examples
0xf8034a49 = Inria
Comment
  Input Signal
Comment
  Signal Processing

Generic stream reader => #0
  Filename = ${Path_Data}/scenarios/signals/bci-motor-imagery.ov
#0.Output stream 2 -> Reference Channel
  Channel = Nz
  Channel Matching Method = Smart
-> Channel Selector "C3;C4;FC3;FC4"
  Channel List = C3;C4;FC3;FC4
  Action = Select
  Channel Matching Method = Smart
-> Temporal Filter
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 24
-> Time based epoching => #4
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 1
-> Simple DSP => #5
  Equation = 1.5*x
-> ASR Processor => #6
  Filename to load model = ${Player_ScenarioDirectory}/ASR-model.xml
#6.Output Signal -> Channel Selector "1"
  Channel List = 1
  Action = Select
  Channel Matching Method = Smart
-> Channel Rename "Reconstructed" => #8
  New channel names = Reconstructed
#6.Signal Reconstructed -> Identity => #9
#5 -> Channel Selector "1"
  Channel List = 1
  Action = Select
  Channel Matching Method = Smart
-> Channel Rename "Amplified" => #11
  New channel names = Amplified
#4 -> Channel Selector "1"
  Channel List = 1
  Action = Select
  Channel Matching Method = Smart
-> Channel Rename "Original" => #13
  New channel names = Original
Input 1=#13, Input 2=#11, Input 3=#8 -> Signal Merger => #14
Data=#14, Stimulations=#9 -> Signal display "Signal"
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 50
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#0.Output stream 3 -> Player Controller
  Stimulation name = OVTK_StimulationId_EndOfFile
  Action to perform = Stop
