OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.3.0)

Time signal
  Sampling frequency = 512
  Generated epoch sample count = 32
-> Simple DSP => #1
  Equation = sin(2*x)
-> Identity => #2
-> Amplitude Artifact Detector => #3
  Threshold (mV) = 0.9
  Action = Stop
  Artifact detected = OVTK_StimulationId_Label_00
Data=#3.Non-artifact signal, Stimulations=#3.Artifact detected -> Signal display "After (Stop)"
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 1.5
  Vertical Offset = 0
  Time Scale = 3.1
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#2 -> Amplitude Artifact Detector => #5
  Threshold (mV) = 0.9
  Action = Cutoff
  Artifact detected = OVTK_StimulationId_Label_00
Data=#5.Non-artifact signal, Stimulations=#5.Artifact detected -> Signal display "After (Cutoff)"
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 1.5
  Vertical Offset = 0
  Time Scale = 3.1
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#2 -> Amplitude Artifact Detector => #7
  Threshold (mV) = 0.9
  Action = Zero
  Artifact detected = OVTK_StimulationId_Label_00
Data=#7.Non-artifact signal, Stimulations=#7.Artifact detected -> Signal display "After (Zero)"
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 1.5
  Vertical Offset = 0
  Time Scale = 3.1
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#2 -> Amplitude Artifact Detector => #9
  Threshold (mV) = 0.9
  Action = Stimulations Only
  Artifact detected = OVTK_StimulationId_Label_00
Data=#9.Non-artifact signal, Stimulations=#9.Artifact detected -> Signal display "After (Stimulations only)"
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 1.5
  Vertical Offset = 0
  Time Scale = 3.1
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Data=#1 -> Signal display "Before"
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 1.5
  Vertical Offset = 0
  Time Scale = 3.1
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Data=#1 -> Signal display "Before"
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 1.5
  Vertical Offset = 0
  Time Scale = 3.1
  Bottom ruler = true
  Left ruler = false
  Multiview = false
