OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.2.0)
0x790d75b8 = Jussi T. Lindgren
0x8c1fc55b = 1.0
0x9f5c4075 = Classification testing example
0xf6b2e3fa = box-tutorials
0xf8034a49 = Inria
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  This is a test scenario corresponding to
  classification-0-training.xml

  Please run the training scenario first.

  Fresh data is drawn from the same distribution
  that was used in the training and is sent
  to the classifier.

  Note that since the data is freshly sampled,
  it was never used in training. Hence, the accuracy
  estimate should be unbiased in this scenario.
Comment
  The lua stimulator generates a timeline
  specifying 10 seconds of data from each class.
  The stimuli control stream switch, which routes
  the uniform random data to class-specific
  transformations.
Comment
  The classification accuracy is measured
  by the Confusion Matrix box.

  When the classification is good,
  the accuracies on the diagonal
  are the highest.

  The 'No Target available' warning is normal,
  it means that in the scenario, the confusion
  matrix gets some predictions from the classifier
  before it has received the corresponding target
  from the lua chain.

Time signal => #0
  Sampling frequency = 512
  Generated epoch sample count = 64
-> Simple DSP => #1
  Equation = rand(1)
#0 -> Simple DSP => #2
  Equation = rand(1)
#0 -> Simple DSP => #3
  Equation = rand(1)
#0 -> Simple DSP => #4
  Equation = rand(1)
Input 1=#1, Input 2=#2, Input 3=#3, Input 4=#4 -> 0xc73e83ec Signal Merger
-> Simple DSP => #6
  Equation = (x+1)*10
Timeout => #7
  Timeout delay = 1
  Output Stimulation = OVTK_StimulationId_Label_01
Timeout => #8
  Timeout delay = 11
  Output Stimulation = OVTK_StimulationId_Label_02
Timeout => #9
  Timeout delay = 21
  Output Stimulation = OVTK_StimulationId_Label_03
Input stimulations 1=#7, Input stimulations 2=#8, Input stimulations 3=#9 -> Stimulation multiplexer => #10
Triggers=#10, Matrix=#6 -> Stream Switch => #11
  Default to output 1 = false
  Switch stim for output 1 = OVTK_StimulationId_Label_01
  Switch stim for output 2 = OVTK_StimulationId_Label_02
  Switch stim for output 3 = OVTK_StimulationId_Label_03
#11.Output -> Spatial Filter
  Spatial Filter Coefficients = 1;0;0;0; 0;0.95;0;0; 0;0;0.95;0; 0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
-> Signal average
-> Feature aggregator => #14
#11.Output(1) -> Spatial Filter
  Spatial Filter Coefficients = 0.95;0;0;0; 0;1;0;0; 0;0;0.95;0; 0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
-> Signal average
-> Feature aggregator => #17
#11.New output -> Spatial Filter
  Spatial Filter Coefficients = 0.95;0;0;0; 0;0.95;0;0; 0;0;1;0; 0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
-> Signal average
-> Feature aggregator => #20
Input stream 1=#14, Input stream 2=#17, Input stream 3=#20 -> Streamed matrix multiplexer => #21
Features=#21 -> Classifier processor => #22
  Filename to load configuration from = ${Path_UserData}/classification-training-tutorial-model.xml
#10 -> Identity => #23
Targets=#23, Classification results=#22.Labels -> Confusion Matrix
  Percentages = true
  Sums = false
  Class 1 = OVTK_StimulationId_Label_01
  Class 2 = OVTK_StimulationId_Label_02
  Class 3 = OVTK_StimulationId_Label_03
-> Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false

Timeout
  Timeout delay = 31
  Output Stimulation = OVTK_StimulationId_ExperimentStop
-> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Pause
