OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.2.0)
0x790d75b8 = Jussi T. Lindgren
0x8c1fc55b = 1.0
0x9f5c4075 = Classification testing example
0xf6b2e3fa = box-tutorials
0xf8034a49 = Inria
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  This is a test scenario illustrating
  basic incremental online learning.

  Data is classified with the learned model,
  and the model is repeatedly updated during
  the session.

  Note that the classifier in principle
  shouldn't be used with the data that
  has been used for its estimation
  (overfitting). Here when the 'reload model'
  is received by the processor, the previous
  classifier has - verify - already processed
  all the features received so far.
Comment
  The lua stimulator generates a timeline
  specifying 4 seconds of data from each class,
  the sources alternating during 48 sec.

  The stimuli in the timeline control stream switch,
  which routes the uniform random data to class-specific
  transformations.
Comment
  The Clock Stimulator tells the
  Classifier Trainer to estimate a
  new classifier every 2s with all
  the so-far accumulted data.
Comment
  The classification accuracy is measured
  by the Confusion Matrix box.

  When the classification is good,
  the accuracies on the diagonal
  are the highest.

  The 'No Target available' warning is normal,
  it means that in the scenario, the confusion
  matrix gets some predictions from the classifier
  before it has received the corresponding target
  from the lua chain.

Time signal => #0
  Sampling frequency = 512
  Generated epoch sample count = 64
-> Simple DSP => #1
  Equation = rand(1)
#0 -> Simple DSP => #2
  Equation = rand(1)
#0 -> Simple DSP => #3
  Equation = rand(1)
#0 -> Simple DSP => #4
  Equation = rand(1)
Input 1=#1, Input 2=#2, Input 3=#3, Input 4=#4 -> 0xc73e83ec Signal Merger
-> Simple DSP => #6
  Equation = (x+1)*10
Timeout => #7
  Timeout delay = 1
  Output Stimulation = OVTK_StimulationId_Label_01
Timeout => #8
  Timeout delay = 17
  Output Stimulation = OVTK_StimulationId_Label_01
Timeout => #9
  Timeout delay = 33
  Output Stimulation = OVTK_StimulationId_Label_03
Timeout => #10
  Timeout delay = 5
  Output Stimulation = OVTK_StimulationId_Label_02
Timeout => #11
  Timeout delay = 21
  Output Stimulation = OVTK_StimulationId_Label_03
Timeout => #12
  Timeout delay = 37
  Output Stimulation = OVTK_StimulationId_Label_03
Timeout => #13
  Timeout delay = 9
  Output Stimulation = OVTK_StimulationId_Label_03
Timeout => #14
  Timeout delay = 25
  Output Stimulation = OVTK_StimulationId_Label_01
Timeout => #15
  Timeout delay = 41
  Output Stimulation = OVTK_StimulationId_Label_02
Timeout => #16
  Timeout delay = 13
  Output Stimulation = OVTK_StimulationId_Label_02
Timeout => #17
  Timeout delay = 29
  Output Stimulation = OVTK_StimulationId_Label_02
Timeout => #18
  Timeout delay = 45
  Output Stimulation = OVTK_StimulationId_Label_01
Input stimulations 1=#7, Input stimulations 2=#10, Input stimulations 3=#13, Input stimulations 4=#16, Input stimulations 5=#8, Input stimulations 6=#11, Input stimulations 7=#14, Input stimulations 8=#17, Input stimulations 9=#9, Input stimulations 10=#12, Input stimulations 11=#15, Input stimulations 12=#18 -> Stimulation multiplexer => #19
Triggers=#19, Matrix=#6 -> Stream Switch => #20
  Default to output 1 = false
  Switch stim for output 1 = OVTK_StimulationId_Label_01
  Switch stim for output 2 = OVTK_StimulationId_Label_02
  Switch stim for output 3 = OVTK_StimulationId_Label_03
#20.Output -> Spatial Filter
  Spatial Filter Coefficients = 1;0;0;0; 0;0.95;0;0; 0;0;0.95;0; 0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
-> Signal average
-> Feature aggregator => #23
#20.Output(1) -> Spatial Filter
  Spatial Filter Coefficients = 0.95;0;0;0; 0;1;0;0; 0;0;0.95;0; 0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
-> Signal average
-> Feature aggregator => #26
#20.New output -> Spatial Filter
  Spatial Filter Coefficients = 0.95;0;0;0; 0;0.95;0;0; 0;0;1;0; 0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
-> Signal average
-> Feature aggregator => #29
Input stream 1=#23, Input stream 2=#26, Input stream 3=#29 -> Streamed matrix multiplexer => #30
#19 -> Identity => #31
Clock stimulator => #32
  Interstimulation interval (in sec) = 2
  Stimulation = OVTK_StimulationId_Train
Stimulations=#32, Features for class 1=#23, Features for class 2=#26, Features for class 3=#29 -> Classifier trainer => #33
  Train trigger = OVTK_StimulationId_Train
  Filename to save configuration to = ${Player_ScenarioDirectory}/classification-2-incremental.cfg
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_StimulationId_Label_01
  Class 2 label = OVTK_StimulationId_Label_02
  Class 3 label = OVTK_StimulationId_Label_03
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Number of partitions for k-fold cross-validation test = 0
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1
  Shrinkage: Force diagonal cov (DDA) = false
  Balance classes = true
Features=#30, Commands=#33 -> Classifier processor => #34
  Filename to load configuration from = ${Player_ScenarioDirectory}/classification-2-incremental.cfg
Targets=#31, Classification results=#34.Labels -> Confusion Matrix
  Percentages = true
  Sums = false
  Class 1 = OVTK_StimulationId_Label_01
  Class 2 = OVTK_StimulationId_Label_02
  Class 3 = OVTK_StimulationId_Label_03
-> Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false

Timeout
  Timeout delay = 48
  Output Stimulation = OVTK_StimulationId_ExperimentStop
-> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Pause
