OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.5.0)
Comment
  Noise generation:

  Generating 4 different noise channels
Comment
  Signal generation:

  4 signals composed of 16Hz and 64Hz sin waves, and noise.
Comment
  Extract coherence matrix:

  3D Matrix is of size freq_taps * n_channels * n_channels.
  Frequency index steps = Sampling freq. (from time signal box) / frequency taps (from connectivity box)
  In our exemple : 512 / 256  = 2.
  So, in order to get the coherence matrix at 16Hz, we need to access index 8 of the freq dimension of the 3D matrix, and the matrix at 64Hz is at index 32.
Comment
  Visual result:

  Depending on the connectivity method, the results will be different. However, they will be on 16Hz and 64Hz as per our signals.

  For exemple
  MSQ:
  Strong coherence between channels 1/2/4 on 16Hz
  Strong coherence between channels 2/3/4 on 64Hz

  AbsImaginaryCoherence:
  Strong coherence between channels 1/4 and 2/4 on 16Hz
  Strong coherence between channels 2/3 and 3/4 on 64Hz

Noise generator => #0
  Channel count = 4
  Sampling frequency = 512
  Generated epoch sample count = 32
  Noise type = Uniform
-> Channel Selector "1" => #1
  Channel List = 1
  Action = Select
  Channel Matching Method = Smart
#0 -> Channel Selector "2" => #2
  Channel List = 2
  Action = Select
  Channel Matching Method = Smart
#0 -> Channel Selector "3" => #3
  Channel List = 3
  Action = Select
  Channel Matching Method = Smart
#0 -> Channel Selector "4" => #4
  Channel List = 4
  Action = Select
  Channel Matching Method = Smart
Time signal => #5
  Sampling frequency = 512
  Generated epoch sample count = 32
Input - A=#5, Input - B=#1 -> Simple DSP => #6
  Equation = sin(16*2*M_PI*x) + 5*(b - 0.5)
Input - A=#5, Input - B=#2 -> Simple DSP => #7
  Equation = sin(16*2*M_PI*x) + sin(64*2*M_PI*x) + 5*(b - 0.5)
Input - A=#5, Input - B=#3 -> Simple DSP => #8
  Equation = sin(64*2*M_PI*x + M_PI/2)+ 5*(b - 0.5)
Input - A=#5, Input - B=#4 -> Simple DSP => #9
  Equation = sin(16*2*M_PI*x+ M_PI/2) + sin(64*2*M_PI*x) + 5*(b - 0.5)
Input 1=#6, Input 2=#7, Input 3=#8, Input 4=#9 -> Signal Merger => #10
Data=#10 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#10 -> Connectivity Measure => #12
  Metric = MagnitudeSquaredCoherence
  Connectivity Measure Length (in sec) = 4
  Connectivity Measure Overlap (in %) = 50
  DC removal = false
  FFT size (frequency taps) = 256
  psd Method = Welch
  Windowing method = Hann
  Window Length (in sec) = 0.25
  Windowing Overlap (in %) = 50
-> Matrix 3D to 2D
  Selection mode = Select
  Dimension to work on = 0
  Index in dimension = 32
-> Matrix Display "64Hz Coherence"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#12 -> Matrix 3D to 2D
  Selection mode = Select
  Dimension to work on = 0
  Index in dimension = 8
-> Matrix Display "16Hz Coherence"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
