OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.2.0)
Comment
  The Time Signal box generates
  a 1 channel linear signal (f(t)=t)
Comment
  The Simple DSP box applies a simple
  function to each sample. This function is
  4 * cos(X) so the output signal is a
  sinusoid in the [-4 +4] range.
Comment
  The Crop box cuts the signal
  to a minimum of -3 and a maximum of
  +3. If the signal gets lower to the minimum
  or higher to the maximum, the sample value is simply
  replaced by the actual minimum or the actual maximum.
Comment
  Finally, the Signal Display box
  displays the result.
Comment
  You can browse each box' documentation by selecting the box and pressing F1

Time signal
  Sampling frequency = 512
  Generated epoch sample count = 32
-> Simple DSP
  Equation = 4 * cos(X)
-> Crop => #2
  Crop method = Min/Max
  Min crop value = -3
  Max crop value = 3
Matrix=#2 -> Continuous Oscilloscope
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Temporal Coherence = Time Locked
  Time Scale = 20
  Matrix Count = 50
  Positive Data Only ? = false
  Gain = 1
  Caption =
  Translucency = 1
  Color = ${AdvancedViz_DefaultColor}
