OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.2.0)
0x790d75b8 = Jussi T. Lindgren
0x9f5c4075 = ERP Plot tutorial
0xf8034a49 = Inria
Comment
  This scenario demonstrates how to do
  Event-Related Potentials (ERP)
  type visualization with OpenViBE.
Comment
  A lua script is used to make an event timeline consisting
  of two types of trials, "Target" and "Nontarget"
Comment
  This left hand side chain here generates a 1-channel signal
  that is zeroes on 'NonTarget' and a phase-locked square
  wave pattern on 'Target'. This is analoguous e.g. to P300
  where an event-related pattern emerges when user attends
  the target on flash and otherwise does not.

  The signal does not attempt to model real EEG,
  but to clearly illustrate the ERP visualization.
Comment
  Using two stream switches is a clever trick to make
  continuous signal by choosing segments in turns
  fom the two input streams.
Comment
  Make approx
  square wave
Comment
  This side computes and displays the ERP plot
Comment
  Downsampling can be used to
  make the plot more smooth
Comment
  Bury the clean signal in noise. The more trials
  you average, the better the ERP plot is able
  to show the pattern buried in noise.
Comment
  We do two separate estimates: one for NonTarget
  and another for Target. The signal is routed accordingly.

  Stimulation based epoching is configured with the trial length.
Comment
  By default the Epoch Variance will do a cumulative
  estimate, so the ERP plot will become more and more
  defined as more trials come in.
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  You should see  a clear difference emerge
  between the plots after averaging for a while.

Time signal => #0
  Sampling frequency = 512
  Generated epoch sample count = 32
Timeline generator => #1
  Lua Script = ${Player_ScenarioDirectory}/erp-plot.lua
  Trials per class = 200
Triggers=#1, Matrix=#0 -> Stream Switch => #2
  Default to output 1 = true
  Switch stim for output 1 = OVTK_StimulationId_NonTarget
  Switch stim for output 2 = OVTK_StimulationId_Target
#2.Output -> Simple DSP "Zero signal" => #3
  Equation = 0
Triggers=#1, Matrix=#0 -> Stream Switch => #4
  Default to output 1 = true
  Switch stim for output 1 = OVTK_StimulationId_NonTarget
  Switch stim for output 2 = OVTK_StimulationId_Target
#4.Output(1) -> Simple DSP
  Equation = sin(2*m_pi*x*2)
-> Crop
  Crop method = Min/Max
  Min crop value = -0.01
  Max crop value = 0.01
-> Simple DSP => #7
  Equation = x*100
Input stream 1=#3, Input stream 2=#7 -> Streamed matrix multiplexer => #8
#1 -> 0x341d3912 Stimulation listener "Print timeline events"
  Log level to use = Information
#1 -> Player Controller
  Stimulation name = OVTK_StimulationId_EndOfFile
  Action to perform = Pause
#1 -> Identity => #11
Data=#8, Stimulations=#11 -> Signal display "Clean signal"
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 10
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Noise generator => #13
  Channel count = 1
  Sampling frequency = 512
  Generated epoch sample count = 32
  Noise type = Uniform
Input - A=#8, Input - B=#13 -> Simple DSP "Mix noise" => #14
  Equation = a+10*(b-0.5)
-> Signal Resampling => #15
  New Sampling Frequency = 128
  Sample Count Per Buffer = 8
  Low Pass Filter Signal Before Downsampling = true
Input signal=#15, Input stimulations=#11 -> Stimulation based epoching
  Epoch duration (in sec) = 1
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_NonTarget
-> Epoch variance => #17
  Averaging type = Cumulative average
  Epoch count = 4
  Significance level = 0.01
Input signal=#15, Input stimulations=#11 -> Stimulation based epoching
  Epoch duration (in sec) = 1
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_Target
-> Epoch variance => #19
  Averaging type = Cumulative average
  Epoch count = 4
  Significance level = 0.01
ERP1=#17.Averaged epochs, Variance1=#17.Variance of epochs, ERP2=#19.Averaged epochs, Variance2=#19.Variance of epochs -> ERP plot
  Filename final figure =
  Trigger to save figure = OVTK_StimulationId_ExperimentStop
  X starts at 0 = true
  Line color 1 = 8,20,89
  Line label 1 = Nontarget
  Line color 2 = 100,0,0
  Line label 2 = Target
Data=#14, Stimulations=#11 -> Signal display "Noisy signal"
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 10
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
