OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.2.0)
0x790d75b8 = Jussi T. Lindgren
0x9f5c4075 = ERSP Plot tutorial
0xf8034a49 = Inria
Comment
  This scenario demonstrates how to do
  Event-Related Spectral Perturbation (ERSP)
  type visualization with OpenViBE.
Comment
  A lua script is used to make an event timeline consisting of two types of trials,
  left and right, and the rest interpreted as... rest.
Comment
  This left hand side chain here generates a 1-channel signal
  that gets modulated differently depending on the trial type.
  The same processing could be used for multichannel signals.

  The signal does not attempt to model real EEG,
  but to clearly illustrate the ERSP visualization.
Comment
  Set oscillation frequency dependending
  on the timeline (trial type or rest).
Comment
  Dampen the signal within-trial in regular intervals
  to illustrate how the ERSP plot can evolve over time.
  Every other second will be dampened during the first 5s,
  controlled by the events from the timeline generator.
Comment
  This side computes and displays the ERSP plot
Comment
  Bury the clean signal in noise. If you change the
  number of trials in the Timeline Generator, you will
  notice that with only a few trials, the ERSP plot does
  not clearly show the spectral structure over time.
  With more trials, the noise gets averaged out.
Comment
  We do two separate estimates: one for Left
  and another for Right. The signal is routed
  accordingly.

  Stimulation based epoching is configured with the trial length.

  Time based epoching further splits the trial to segments as desired.

  Each segment gets its own spectral power computation.
Comment
  If the ERSP Average receives k consequent spectra for
  each trial t ( that is, a sequence s1(t),...,sk(t) ], the box computes
  their averages over t: result is a set of spectra s1,...,sk,
  where s1 = 1/n sum_t(s1(t)) and so on.  These average spectra
  are then shown by the Stacked Bitmap.

  The ERSP will be only visualized after all the data has been received.
Comment
  In the default configuration you should see
  the clear differences in the spectral powers
  over time in the conditions Left, Right and Rest.
  The last few seconds of each 5s are rest.
Comment
  You can browse each box' documentation by selecting the box and pressing F1

Time signal => #0
  Sampling frequency = 512
  Generated epoch sample count = 32
Timeline generator => #1
  Lua Script = ${Player_ScenarioDirectory}/ersp-plot.lua
  Trials per class = 10
Triggers=#1, Matrix=#0 -> Stream Switch => #2
  Default to output 1 = true
  Switch stim for output 1 = OVTK_StimulationId_RestStart
  Switch stim for output 2 = OVTK_GDF_Left
  Switch stim for output 3 = OVTK_GDF_Right
#2.Output -> Simple DSP "Rest = 1Hz" => #3
  Equation = sin(2*m_pi*x*1)
#2.Output(1) -> Simple DSP "Left = 8Hz" => #4
  Equation = sin(2*m_pi*x*8)
#2.New output -> Simple DSP "Right = 14Hz" => #5
  Equation = sin(2*m_pi*x*14)
Input stream 1=#3, Input stream 2=#4, Input stream 3=#5 -> Streamed matrix multiplexer => #6
#1 -> 0x341d3912 Stimulation listener "Print timeline events"
  Log level to use = Information
#1 -> Identity => #8
Triggers=#8, Matrix=#6 -> Stream Switch => #9
  Default to output 1 = true
  Switch stim for output 1 = OVTK_StimulationId_Label_00
  Switch stim for output 2 = OVTK_StimulationId_Label_01
#9.Output(1) -> Simple DSP "Dampen" => #10
  Equation = x*0.1
Input stream 1=#9.Output, Input stream 2=#10 -> Streamed matrix multiplexer => #11
#8 -> Identity => #12
Data=#11, Stimulations=#12 -> Signal display "Source signal"
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 10
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#12 -> Identity => #14
#1 -> Player Controller
  Stimulation name = OVTK_StimulationId_EndOfFile
  Action to perform = Pause
Noise generator => #16
  Channel count = 1
  Sampling frequency = 512
  Generated epoch sample count = 32
  Noise type = Uniform
Input - A=#11, Input - B=#16 -> Simple DSP "Mix noise" => #17
  Equation = a+10*(b-0.5)
-> Signal Resampling => #18
  New Sampling Frequency = 128
  Sample Count Per Buffer = 8
  Low Pass Filter Signal Before Downsampling = true
Input signal=#18, Input stimulations=#12 -> Stimulation based epoching
  Epoch duration (in sec) = 10
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_GDF_Left
-> Time based epoching
  Epoch duration (in sec) = 0.5
  Epoch intervals (in sec) = 0.5
-> Spectral Analysis => #21
  Amplitude = true
  Phase = true
  Real Part = false
  Imaginary Part = false
Input - A=#21.Amplitude, Input - B=#21.Phase -> Simple DSP => #22
  Equation = sqrt(a*a + b*b)
Input spectrum=#22, Control=#14 -> ERSP Average => #23
  Epoching stim = OVTK_GDF_Left
  Launch compute = OVTK_StimulationId_ExperimentStop
Matrix=#23 -> Left
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Temporal Coherence = Time Locked
  Time Scale = 10
  Matrix Count = 20
  Gain = 0.01
  Caption =
  Color = ${AdvancedViz_DefaultColorGradient}
Input signal=#18, Input stimulations=#12 -> Stimulation based epoching
  Epoch duration (in sec) = 10
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_GDF_Right
-> Time based epoching
  Epoch duration (in sec) = 0.5
  Epoch intervals (in sec) = 0.5
-> Spectral Analysis => #27
  Amplitude = true
  Phase = true
  Real Part = false
  Imaginary Part = false
Input - A=#27.Amplitude, Input - B=#27.Phase -> Simple DSP => #28
  Equation = sqrt(a*a + b*b)
Input spectrum=#28, Control=#14 -> ERSP Average => #29
  Epoching stim = OVTK_GDF_Right
  Launch compute = OVTK_StimulationId_ExperimentStop
Matrix=#29 -> Right
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Temporal Coherence = Time Locked
  Time Scale = 10
  Matrix Count = 20
  Gain = 0.01
  Caption =
  Color = ${AdvancedViz_DefaultColorGradient}
Data=#17, Stimulations=#12 -> Signal display "Noisy signal"
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 10
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
