OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.2.0)
Comment
  Illustration of the usage of the External Processing Box.

  This box launches an external program and connects to it via TCP/IP.

  This particular example uses the example program given with the OpenViBE SDK,
  it will take any number of inputs and echo them on respective outputs.
Comment
  Important options the box takes are:

  Launch Third Party Program - OpenViBE will start the
  external program by itself if this setting is true.

  Executable Path - Program to launch. The path can
  be an absolute path to a program, or a name of a program
  in system PATH.

  Arguments - Arguments to pass to the external program.

  Port - The port through which the program will communicate
  with openvibe. If the program is launched by OpenViBE this port will
  be automatically passed to it using argument --port <port>
  If the port is set to 0, an available one will be chosen automatically.

  Generator - Should be set to true if the box does not need to
  process data synchronously. This usually means that it does not have
  any inputs.

Time signal
  Sampling frequency = 512
  Generated epoch sample count = 32
-> Simple DSP => #1
  Equation = sin(x)
Clock stimulator => #2
  Interstimulation interval (in sec) = 1
  Stimulation = OVTK_StimulationId_Label_00
New input=#1, New input(1)=#2 -> External Processing => #3
  Launch third party program = true
  Executable path = ${Path_Bin}/sdk-examples-communication-client-filter
  Arguments =
  Port = 0
  Automatic connection identifier = true
  Custom connection identifier =
  Incoming connection timeout = 10
  Generator = false
Matrix=#3.New output, Markers=#3.New output(1) -> Continuous Oscilloscope
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Temporal Coherence = Time Locked
  Time Scale = 20
  Matrix Count = 50
  Positive Data Only ? = false
  Gain = 1
  Caption =
  Translucency = 1
  Color = ${AdvancedViz_DefaultColor}
