OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.2.0)
Comment
  Illustration of the usage of the External Processing Box.

  This box launches an external program and connects to it via TCP/IP.

  This particular example uses the generator example program given with the OpenViBE SDK.

  It will generate several sinus signals with a custom sampling rate and epoching.

  Optionally it can stop generating samples after a period of time.
Comment
  Important options the box takes are:

  Launch Third Party Program - OpenViBE will start the
  external program by itself if this setting is true.

  Executable Path - Program to launch. The path can
  be an absolute path to a program, or a name of a program
  in system PATH.

  Arguments - Arguments to pass to the external program.

  Port - The port through which the program will communicate
  with openvibe. If the program is launched by OpenViBE this port will
  be automatically passed to it using argument --port <port>
  If the port is set to 0, an available one will be chosen automatically.

  Generator - Should be set to true if the box does not need to
  process data synchronously. This usually means that it does not have
  any inputs. In this scenario this is the case!
Comment
  The generator example program can take the following settings:


  Channel Count
  Sampling Rate
  Samples Per Buffer
  Samples To Generate - The program will stop after this many samples

External Processing => #0
  Launch third party program = true
  Executable path = ${Path_Bin}/sdk-examples-communication-client-generator
  Arguments =
  Port = 0
  Automatic connection identifier = true
  Custom connection identifier =
  Incoming connection timeout = 10
  Generator = true
  Channel Count = 4
  Sampling Rate = 128
  Samples Per Buffer = 16
  Amount of Samples to Generate = 512
Matrix=#0 -> 4 Channels
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Temporal Coherence = Time Locked
  Time Scale = 20
  Matrix Count = 50
  Positive Data Only ? = false
  Gain = 1
  Caption =
  Translucency = 1
  Color = ${AdvancedViz_DefaultColor}

External Processing => #2
  Launch third party program = true
  Executable path = ${Path_Bin}/sdk-examples-communication-client-generator
  Arguments =
  Port = 0
  Automatic connection identifier = true
  Custom connection identifier =
  Incoming connection timeout = 10
  Generator = true
  Channel Count = 5
  Sampling Rate = 128
  Samples Per Buffer = 16
  Amount of Samples to Generate = 512
Matrix=#2 -> 5 Channels
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Temporal Coherence = Time Locked
  Time Scale = 20
  Matrix Count = 50
  Positive Data Only ? = false
  Gain = 1
  Caption =
  Translucency = 1
  Color = ${AdvancedViz_DefaultColor}
