OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.2.0)
0x790d75b8 = Thibaut Monseigne
0x8c1fc55b = 1.0
0x9f5c4075 = Features Selection Example
0xf6b2e3fa = box-tutorials
0xf8034a49 = Inria

Noise generator
  Channel count = 4
  Sampling frequency = 512
  Generated epoch sample count = 32
  Noise type = 1
-> Simple DSP "x²"
  Equation = x*x
-> Signal average => #2
Noise generator
  Channel count = 4
  Sampling frequency = 512
  Generated epoch sample count = 32
  Noise type = 1
-> Simple DSP "x²"
  Equation = x*x
-> Signal average => #5
Noise generator
  Channel count = 4
  Sampling frequency = 512
  Generated epoch sample count = 32
  Noise type = 1
-> Simple DSP "x²"
  Equation = x*x
-> Signal average => #8
Noise generator
  Channel count = 4
  Sampling frequency = 512
  Generated epoch sample count = 32
  Noise type = 1
-> Simple DSP "x²"
  Equation = x*x
-> Signal average => #11
Input stream 1=#2, Input stream 2=#5, Input stream 3=#8, Input stream 4=#11 -> Feature aggregator => #12
Noise generator
  Channel count = 4
  Sampling frequency = 512
  Generated epoch sample count = 32
  Noise type = 1
-> Simple DSP "x²"
  Equation = x*x
-> Signal average => #15
Noise generator
  Channel count = 4
  Sampling frequency = 512
  Generated epoch sample count = 32
  Noise type = 1
-> Simple DSP "x²"
  Equation = x*x
-> Signal average => #18
Noise generator
  Channel count = 4
  Sampling frequency = 512
  Generated epoch sample count = 32
  Noise type = 1
-> Simple DSP "x²"
  Equation = x*x
-> Signal average => #21
Noise generator
  Channel count = 4
  Sampling frequency = 512
  Generated epoch sample count = 32
  Noise type = 1
-> Simple DSP "x²"
  Equation = x*x
-> Signal average => #24
Input stream 1=#15, Input stream 2=#18, Input stream 3=#21, Input stream 4=#24 -> Feature aggregator => #25
Clock stimulator => #26
  Interstimulation interval (in sec) = 2
  Stimulation = OVTK_StimulationId_Train
Train-Start Flag=#26, Class 1=#12, Class 2=#25 -> Features Selection Trainer => #27
  Log Level = Information
  Train trigger = OVTK_StimulationId_Train
  Filename to save Feature Selection = ${Player_ScenarioDirectory}/features-selected.xml
  Method = mRMR (minimum Redundancy Maximum Relevance)
  Number of features to select = 2
  Discretisation = true
  Threshold = 0
  mRMR Method = MID
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Pause
#27 -> Stimulation listener
  Log level to use = Information
