OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.2.0)
Comment
  The Generic Stream Reader box
  reads an OpenViBE file from disk and sends
  its content to the following box.
  The OpenViBE file format can store any
  stream of the NeuroRT platform.
Comment
  The Temporal Filter enables
  us to center data around 0 by removing
  low frequencies.
Comment
  The Continuous Oscilloscope box displays
  the content of the file.

  You might need to right click and drag up or down
  in order to zoom to the signal.
Comment
  You can browse each box' documentation by selecting the box and pressing F1

Generic stream reader => #0
  Filename = ${Path_Data}/scenarios/signals/bci-motor-imagery.ov
#0.Output stream 2 -> Temporal Filter => #1
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 1
  High Cut-off Frequency (Hz) = 100
Matrix=#1, Markers=#0.Output stream 3 -> Continuous Oscilloscope
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Temporal Coherence = Time Locked
  Time Scale = 20
  Matrix Count = 50
  Positive Data Only ? = false
  Gain = 0.01
  Caption =
  Translucency = 1
  Color = ${AdvancedViz_DefaultColor}
