OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.2.0)

Time signal
  Sampling frequency = 256
  Generated epoch sample count = 1
-> Simple DSP
  Equation = sin(x)
-> Identity => #2
-> Matrix Display "Before"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Clock stimulator => #4
  Interstimulation interval (in sec) = 2
  Stimulation = OVTK_StimulationId_Label_00
Input 1=#2, Input 2=#2, Input 3=#4 -> Send LSL
  Input 1 Stream Name = i1ov
  Input 2 Stream Name = i2ov
  Input 3 Stream Name = i3ov
#4 -> Stimulation listener "Stim Beffore"
  Log level to use = Information

Receive LSL => #7
  Output 1 Stream Name = i1ov
  Output 2 Stream Name = i2ov
  Output 3 Stream Name = i3ov
#7.Output 1 -> Matrix Display "Output 1"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#7.Output 2 -> Matrix Display "Output 2"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#7.Output 3 -> Stimulation listener "Stim After"
  Log level to use = Information
