OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.2.0)
Comment
  Classical MI BCI Run Stimulation
Comment
  No needed to trasnform 2D matrix to Vector Matrix
  but the buffer size must be equal to number of modality

Time signal => #0
  Sampling frequency = 512
  Generated epoch sample count = 1
-> Simple DSP "sin(x)" => #1
  Equation = abs(sin(x))
#0 -> Simple DSP "cos(x)" => #2
  Equation = abs(cos(x))
Input 1=#1, Input 2=#2 -> Signal Merger => #3
Lua Stimulator => #4
  Lua Script = ${Player_ScenarioDirectory}/multimodal-graz-visualization.lua
  Number of Trials for Each Class = 10
  Baseline Duration (in sec) = 1
  Wait For Beep Duration (in sec) = 2
  Wait For Cue Duration (in sec) = 1
  Display Cue Duration (in sec) = 1.25
  Feedback Duration (in sec) = 3.75
  End of Trial Minimum Duration (in sec) = 1.5
  End of Trial Maximum Duration (in sec) = 3.5
  Number of Class = 2
  First Class = OVTK_GDF_Left
  Second Class = OVTK_GDF_Right
Input stream 1=#4, Input stream 2=#3 -> Identity => #5
Stimulations=#5.Output stream 1, Amplitude=#5.Output stream 2 -> Show All => #6
  Show instruction = true
  Feedback display mode = All
  Delay feedback = false
  Show accuracy = true
  Predictions to integrate = 1
  Image no instruction = ${Path_Data}/plugins/simple-visualization/graz/none.png
  Stimulation modality 1 = OVTK_GDF_Left
  Image modality 1 = ${Path_Data}/plugins/simple-visualization/graz/left.png
  Stimulation modality 2 = OVTK_GDF_Right
  Image modality 2 = ${Path_Data}/plugins/simple-visualization/graz/right.png
#6.Displayed Bar Size -> Matrix Display "Bar Size (Show All)"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#6.Confusion Matrix -> Matrix Display "Confusion"
  Color gradient = 0:100,100,100; 100:100,100,100
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Stimulations=#5.Output stream 1, Amplitude=#5.Output stream 2 -> Positive Only => #9
  Show instruction = true
  Feedback display mode = Positive Only
  Delay feedback = false
  Show accuracy = false
  Predictions to integrate = 1
  Image no instruction = ${Path_Data}/plugins/simple-visualization/graz/none.png
  Stimulation modality 1 = OVTK_GDF_Left
  Image modality 1 = ${Path_Data}/plugins/simple-visualization/graz/left.png
  Stimulation modality 2 = OVTK_GDF_Right
  Image modality 2 = ${Path_Data}/plugins/simple-visualization/graz/right.png
#9.Displayed Bar Size -> Matrix Display "Bar Size (Positive Only)"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
