OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.1.0)
0x790d75b8 = Thibaut Monseigne
0x84009d7c = Example WIth Noise Input
0x8c1fc55b = 1.0
0x9f5c4075 = Covariance Matrix Calculator Example
0xf6b2e3fa = box-tutorials
0xf8034a49 = Inria
Comment
  Input Signal
Comment
  Signal Processing
Comment
  Methods
Comment
  Displays
Comment
  Unimplemented Algorithms are in disabled Boxes
Settings
  Data = ${Path_Data}/scenarios/signals/bci-motor-imagery.ov
  Log Level = Information

Generic stream reader => #0
  Filename = $var{Data}
#0.Output stream 2 -> Reference Channel
  Channel = Nz
  Channel Matching Method = Smart
-> Channel Selector "C3;C4;FC3;FC4"
  Channel List = C3;C4;FC3;FC4
  Action = Select
  Channel Matching Method = Smart
-> Temporal Filter
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 24
-> Time based epoching => #4
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.5
-> COV
  Estimator = Covariance
  Center Data = true
  Log Level = $var{Log Level}
-> Matrix Display "COV"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#4 -> COR
  Estimator = Pearson Correlation
  Center Data = true
  Log Level = $var{Log Level}
-> Matrix Display "COR"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#4 -> LWF
  Estimator = Ledoit and Wolf
  Center Data = true
  Log Level = $var{Log Level}
-> Matrix Display "LWF"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#4 -> OAS
  Estimator = Oracle Approximating Shrinkage (OAS)
  Center Data = true
  Log Level = $var{Log Level}
-> Matrix Display "OAS"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#4 -> 0x341d3912 MCD
  Estimator = Identity
  Center Data = true
  Log Level = $var{Log Level}
-> 0x341d3912 Matrix Display "MCD"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#4 -> SCM
  Estimator = Normalized Spatial Covariance Matrix (SCM)
  Center Data = true
  Log Level = $var{Log Level}
-> Matrix Display "SCM"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#4 -> IDE
  Estimator = Identity
  Center Data = true
  Log Level = $var{Log Level}
-> Matrix Display "IDE"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false

Signal display "Sample"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 30
  Bottom ruler = true
  Left ruler = false
  Multiview = false
