OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.1.0)
0x790d75b8 = Thibaut Monseigne
0x84009d7c = Example WIth Noise Input
0x8c1fc55b = 1.0
0x9f5c4075 = Covariance Matrix Mean Calculator Example
0xf6b2e3fa = box-tutorials
0xf8034a49 = Inria
Comment
  Input Signal
Comment
  Signal Processing
Comment
  Compute Covariance
Comment
  Displays
Comment
  Stimulation needed to start the compute
Settings
  Data = ${Path_Data}/scenarios/signals/bci-motor-imagery.ov
  Stimulation = OVTK_StimulationId_TrainCompleted
  Log Level = Information

Generic stream reader => #0
  Filename = $var{Data}
#0.Output stream 2 -> Reference Channel
  Channel = Nz
  Channel Matching Method = Smart
-> Channel Selector "C3;C4;FC3;FC4"
  Channel List = C3;C4;FC3;FC4
  Action = Select
  Channel Matching Method = Smart
-> Temporal Filter => #3
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 24
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.5
-> LWF => #5
  Estimator = Ledoit and Wolf
  Center Data = true
  Log Level = $var{Log Level}
-> Matrix Display "LWF"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Data=#3 -> Signal display "Sample"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 30
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Timeout => #8
  Timeout delay = 60
  Output Stimulation = $var{Stimulation}
-> Player Controller
  Stimulation name = $var{Stimulation}
  Action to perform = Pause
Input Stimulation=#8, Input Covariance Matrix 1=#5 -> Covariance Mean Calculator
  Metric = Riemann
  Filename to save Matrix (CSV, empty to not save) = ${Player_ScenarioDirectory}/Mean.csv
  Stimulation name that triggers the compute = $var{Stimulation}
  Log Level = $var{Log Level}
-> Matrix Display "Mean"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
