OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.1.0)
0x790d75b8 = Thibaut Monseigne
0x8c1fc55b = 1.0
0x9f5c4075 = Covairance To Feature Example
0xf6b2e3fa = box-tutorials
0xf8034a49 = Inria
Comment
  Input Signal
Comment
  Signal Processing
Comment
  Compute Covariance
Comment
  Compute Tangent Space
Comment
  Displays
Settings
  Data = ${Path_Data}/scenarios/signals/bci-motor-imagery.ov
  Filename to Reference Matrix = ${Player_ScenarioDirectory}/Mean.csv
  Log Level = Information

Generic stream reader => #0
  Filename = $var{Data}
#0.Output stream 2 -> Reference Channel
  Channel = Nz
  Channel Matching Method = Smart
-> Channel Selector "C3;C4;FC3;FC4"
  Channel List = C3;C4;FC3;FC4
  Action = Select
  Channel Matching Method = Smart
-> Temporal Filter => #3
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 24
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.5
-> LWF => #5
  Estimator = Ledoit and Wolf
  Center Data = true
  Log Level = $var{Log Level}
-> Tangent Space
  Tangent Space = true
  Filename to Reference Matrix (CSV, empty for Identity) = $var{Filename to Reference Matrix}
  Log Level = $var{Log Level}
-> Matrix Display "Tangent Space"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#5 -> Squeeze
  Tangent Space = false
  Filename to Reference Matrix (CSV, empty for Identity) =
  Log Level = $var{Log Level}
-> Matrix Display "Squeeze"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#5 -> Matrix Display "LWF"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#3 -> Identity => #11
Data=#11 -> Signal display "Sample"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 30
  Bottom ruler = true
  Left ruler = false
  Multiview = false
