OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
0x790d75b8 = Thibaut Monseigne
0x8c1fc55b = 1.0
0x9f5c4075 = Matrix Classification Training Example
0xf6b2e3fa = bci-examples
0xf8034a49 = Inria
Settings
  Data = ${Path_Data}/scenarios/signals/bci-motor-imagery.ov
  Directory = ${Player_ScenarioDirectory}
  Model Filename = Riemann-Training-Model.xml
  Stimulation Class 1 = OVTK_GDF_Left
  Stimulation Class 2 = OVTK_GDF_Right
  Log Level = Information

Sinus oscillator
  Channel count = 4
  Sampling frequency = 64
  Generated epoch sample count = 32
-> Covariance Matrix Calculator => #1
  Estimator = Ledoit and Wolf
  Center Data = true
  Log Level = Information
-> Matrix Affine Transformation
  Filename to load transformation =
  Filename to save transformation =
  Continuous Update = true
-> Matrix Display "After"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#1 -> Matrix Display "Before"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
