OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.2.0)
Comment
  The Clock Stimulator box
  is configured to trigger a stimulation
  every 10 seconds.
Comment
  The Run Command box
  launches a web browser each  time
  a stimulation is received. This box
  can be used to launch whatever
  command most fits your needs.
Comment
  You can browse each box' documentation by selecting the box and pressing F1

Clock stimulator
  Interstimulation interval (in sec) = 10
  Stimulation = OVTK_StimulationId_Label_00
-> Run Command
  Stimulation 1 = OVTK_StimulationId_Label_00
  Command 1 = xdg-open http://openvibe.inria.fr &
  Stimulation 2 = OVTK_StimulationId_Label_00
  Command 2 = START iexplore http://openvibe.inria.fr
