OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.2.0)
Comment
  This scenario illustrates the use of the Signal Merger box.

  The box joins the two artificial signal channels coming from the
  Sinus Oscillator box with the channel received from the
  Time Signal box.

  Hence, the resulting merged stream will have three channels,
  as is seen in the Signal Display during playback.
Comment
  You can browse each box' documentation by selecting the box and pressing F1

Sinus oscillator => #0
  Channel count = 2
  Sampling frequency = 512
  Generated epoch sample count = 32
Time signal => #1
  Sampling frequency = 512
  Generated epoch sample count = 32
Input 1=#0, Input 2=#1 -> Signal Merger => #2
Data=#2 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
