OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.2.0)
Comment
  The Simple DSP box performs
  simple computations on input matrix
  These computations can be logical or
  arithmetical.
Comment
  The Time signal is a sample box
  that generates a constant increasing signal
Comment
  Example simple DSPs using only one input signal
  to perform mathematical operations
Comment
  You can use the letter 'X' (or 'x')
   for the first input.

  You can use up to 16 inputs.
  If you are using more than 1 input
  You have to use the letters a to p
  for inputs 1 to 16 respectively.
Comment
  if-then-else clause
  can be achieved using
  COND ? output-true : output-false
Comment
  You can browse each box' documentation by selecting the box and pressing F1

Time signal => #0
  Sampling frequency = 512
  Generated epoch sample count = 32
-> Simple DSP "y = x" => #1
  Equation = x
Matrix=#1 -> Display: y = x
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Temporal Coherence = Time Locked
  Time Scale = 20
  Matrix Count = 50
  Positive Data Only ? = false
  Gain = 1
  Caption =
  Translucency = 1
  Color = ${AdvancedViz_DefaultColor}
#0 -> Simple DSP "y = x³" => #3
  Equation = pow(x,3)
Matrix=#3 -> Display: y = x³
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Temporal Coherence = Time Locked
  Time Scale = 20
  Matrix Count = 50
  Positive Data Only ? = false
  Gain = 1
  Caption =
  Translucency = 1
  Color = ${AdvancedViz_DefaultColor}
#0 -> Simple DSP "y = cos(x) /(x+1) * 20" => #5
  Equation = cos(x)/(x+1) * 20
Matrix=#5 -> Display: y = cos(x)/(x+1) * 20
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Temporal Coherence = Time Locked
  Time Scale = 100
  Matrix Count = 50
  Positive Data Only ? = false
  Gain = 1
  Caption =
  Translucency = 1
  Color = ${AdvancedViz_DefaultColor}
#0 -> Simple DSP "y = cos(x)" => #7
  Equation = cos(X)
Matrix=#7 -> Display: y = cos(x)
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Temporal Coherence = Time Locked
  Time Scale = 20
  Matrix Count = 50
  Positive Data Only ? = false
  Gain = 1
  Caption =
  Translucency = 1
  Color = ${AdvancedViz_DefaultColor}
#0 -> Simple DSP "y = sin(x)" => #9
  Equation = sin(X)
Input - A=#7, Input - B=#9 -> Simple DSP "DSP: a > b ? a : b" => #10
  Equation = a>b?a:b
Matrix=#10 -> Display: y = MAX(cos(x), sin(x))
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Temporal Coherence = Time Locked
  Time Scale = 20
  Matrix Count = 50
  Positive Data Only ? = false
  Gain = 1
  Caption =
  Translucency = 1
  Color = ${AdvancedViz_DefaultColor}
Input - A=#7, Input - B=#9 -> Simple DSP "DSP: b/a" => #12
  Equation = b/a
Matrix=#12 -> Display: y = sin(x)/cos(x)
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Temporal Coherence = Time Locked
  Time Scale = 20
  Matrix Count = 50
  Positive Data Only ? = false
  Gain = 1
  Caption =
  Translucency = 1
  Color = ${AdvancedViz_DefaultColor}
Matrix=#9 -> Display: y = sin(x)
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Temporal Coherence = Time Locked
  Time Scale = 20
  Matrix Count = 50
  Positive Data Only ? = false
  Gain = 1
  Caption =
  Translucency = 1
  Color = ${AdvancedViz_DefaultColor}
