OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.2.0)

Clock stimulator => #0
  Interstimulation interval (in sec) = 1
  Stimulation = OVTK_StimulationId_Label_00
-> Stimulation Validator
  Stimulation to count = OVTK_StimulationId_Label_00
  Number for validation = 2
-> Stimulation listener "After Validation"
  Log level to use = Information
#0 -> Stimulation listener "Before Validation"
  Log level to use = Information

Timeout
  Timeout delay = 5
  Output Stimulation = OVTK_StimulationId_Label_00
-> Player Controller
  Stimulation name = OVTK_StimulationId_Label_00
  Action to perform = Stop
