OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.2.0)
Comment
  Simple Input With 3 frequency sinus with F1, F2, F3
  y = sin(2*pi*f)
Settings
  PI = 3.14159265359
  f1 = 1
  f2 = 2
  f3 = 3
  Order = 4
  Low Cut = 0.9
  High Cut = 1.1
  Display Scale = 4
  Time Scale = 5

Time signal => #0
  Sampling frequency = 512
  Generated epoch sample count = 32
-> Simple DSP "F1" => #1
  Equation = sin(2*$var{PI}*$var{f1}*x)
Data=#1 -> Signal display "Raw F1"
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = $var{Display Scale}
  Vertical Offset = 0
  Time Scale = $var{Time Scale}
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#0 -> Simple DSP "F2" => #3
  Equation = sin(2*$var{PI}*$var{f2}*x)
Data=#3 -> Signal display "Raw F2"
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = $var{Display Scale}
  Vertical Offset = 0
  Time Scale = $var{Time Scale}
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#0 -> Simple DSP "F3" => #5
  Equation = sin(2*$var{PI}*$var{f3}*x)
Data=#5 -> Signal display "Raw F3"
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = $var{Display Scale}
  Vertical Offset = 0
  Time Scale = $var{Time Scale}
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Input - A=#1, Input - B=#3, Input - C=#5 -> Simple DSP "Add" => #7
  Equation = A+B+C
-> Temporal filter "Multi Band Pass" => #8
  Filter Type = Band Pass
  Filter Order = $var{Order}
  Low Cut-off Frequency (Hz) = 0.9
  High Cut-off Frequency (Hz) = 1.1
  Low Cut-off Frequency 2 (Hz) = 1.9
  High Cut-off Frequency 2 (Hz) = 2.1
  Low Cut-off Frequency 3 (Hz) = 2.9
  High Cut-off Frequency 3 (Hz) = 3.1
Data=#8.Output signal -> Signal display "Filtered F1"
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = $var{Display Scale}
  Vertical Offset = 0
  Time Scale = $var{Time Scale}
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Data=#8.Output signal 2 -> Signal display "Filtered F2"
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = $var{Display Scale}
  Vertical Offset = 0
  Time Scale = $var{Time Scale}
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Data=#8.Output signal 3 -> Signal display "Filtered F3"
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = $var{Display Scale}
  Vertical Offset = 0
  Time Scale = $var{Time Scale}
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#7 -> Temporal filter "Band Pass F1" => #12
  Filter Type = Band Pass
  Filter Order = $var{Order}
  Low Cut-off Frequency (Hz) = $var{Low Cut}
  High Cut-off Frequency (Hz) = $var{High Cut}
Data=#12 -> Signal display "Band Pass (approx F1)"
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = $var{Display Scale}
  Vertical Offset = 0
  Time Scale = $var{Time Scale}
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#7 -> Temporal filter "Band Stop F1" => #14
  Filter Type = Band Stop
  Filter Order = $var{Order}
  Low Cut-off Frequency (Hz) = $var{Low Cut}
  High Cut-off Frequency (Hz) = $var{High Cut}
Data=#14 -> Signal display "Band Stop (Approx F2 + F3)"
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = $var{Display Scale}
  Vertical Offset = 0
  Time Scale = $var{Time Scale}
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#7 -> Temporal filter "High Pass F1" => #16
  Filter Type = High Pass
  Filter Order = $var{Order}
  Low Cut-off Frequency (Hz) = $var{Low Cut}
  High Cut-off Frequency (Hz) = $var{High Cut}
Data=#16 -> Signal display "High Pass (Approx Raw)"
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = $var{Display Scale}
  Vertical Offset = 0
  Time Scale = $var{Time Scale}
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#7 -> Temporal filter "Low Pass F1" => #18
  Filter Type = Low Pass
  Filter Order = $var{Order}
  Low Cut-off Frequency (Hz) = $var{Low Cut}
  High Cut-off Frequency (Hz) = $var{High Cut}
Data=#18 -> Signal display "Low Pass (Approx F1)"
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = $var{Display Scale}
  Vertical Offset = 0
  Time Scale = $var{Time Scale}
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Data=#7 -> Signal display "Raw"
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = $var{Display Scale}
  Vertical Offset = 0
  Time Scale = $var{Time Scale}
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Input - A=#3, Input - B=#5 -> Simple DSP "Add" => #21
  Equation = A+B
Data=#21 -> Signal display "Raw F2 + F3"
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = $var{Display Scale}
  Vertical Offset = 0
  Time Scale = $var{Time Scale}
  Bottom ruler = true
  Left ruler = false
  Multiview = false
