OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.2.0)
Comment
  The Generic Stream Reader box
  reads an OpenViBE file containing signals.
Comment
  Each channel is referenced against
  channel Nz (which was recorded on the nose
  in the demonstrated file) thanks to the
  Reference Channel box.
Comment
  Then the Temporal Filter box
  filters the signal in the beta [16 24] Hz range.
Comment
  The Time Based Epoching box
  splits the signals in blocks of 1 seconds every
  16th of second. This is a moving window.
Comment
  Then for each window, the band power is
  computed thanks to the Simple DSP
  box (wich computes squares of each sample) and
  the Signal Average box
  which reduces each window to a single sample for
  each channl : the mean of all the samples
  of this window for this channel.
Comment
  The average beta power is averaged over
  4 estimations thanks to the Epoch
  Average box.
Comment
  Finally, the 2D Topographic Map
  and the 3D Topographic Map
  boxes display the resulting beta power over the scalp
  surface, getting the channel localisation from the
  Electrode Localisation File Reader.
Comment
  You can browse each box' documentation by selecting the box and pressing F1

Generic stream reader => #0
  Filename = ${Path_Data}/scenarios/signals/bci-motor-imagery.ov
#0.Output stream 2 -> Reference Channel
  Channel = Nz
  Channel Matching Method = Smart
-> Temporal Filter
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 16
  High Cut-off Frequency (Hz) = 24
-> Time based epoching
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.0625
-> Simple DSP
  Equation = x*x
-> Signal average
-> Epoch average => #6
  Averaging type = Moving epoch average
  Epoch count = 4
-> 3D Topography
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Gain = 0.05
  Caption =
  Color = ${AdvancedViz_DefaultColorGradient}
Electrode localisation file reader => #8
  Filename = ${AdvancedViz_ChannelLocalisation}
Signal=#6, Channel localization=#8 -> 2D topographic map
  Interpolation type = Spline (potentials)
  Delay (in s) = 0
