OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.3.0)
Comment
  This scenario is an example of
  how to convert files between formats.

  Conversion may not work correctly for all
  possible input and output combinations.

  You may have to customize the scenario
  to your particular case.

  If you run this scenario manually from Designer,
  please configure the input and output filenames
  of the reader and writer boxes.

  Script 'openvibe-convert' relies on this scenario.

GDF file reader => #0
  Filename = $ENV{OV_CONVERT_SRC}
  Samples per buffer = 32
#0.EEG stream -> Timeout
  Timeout delay = 1
  Output Stimulation = OVTK_StimulationId_Label_00
-> Player Controller
  Stimulation name = OVTK_StimulationId_Label_00
  Action to perform = Stop
Input stream=#0.EEG stream, Stimulations stream=#0.Stimulations -> CSV File Writer
  Filename = $ENV{OV_CONVERT_DEST}
  Precision = 10
  Append data = false
  Only last matrix = false
